PsychoPy2experiment version="2020.1.2"
Settings
  Completed URL = https://app.prolific.co/submissions/complete?cc=4D16E950
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = pix
  Window size (pixels) = [1280, 800]
  expName = Flower_Similarity_Experiment
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Routines
  Routine welcome_instr
    TextComponent text_54
      color = yellow
      letterHeight = 0.1
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = You may quit the experiment at anytime by pressing <ESC>
      units = norm
      wrapWidth = 1000
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    TextComponent welcome
      color = yellow
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1000
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      text:
        Welcome to this experiment

        This will take about 45 minutes
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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    TextComponent space
      color = yellow
      letterHeight = 0.05
      pos = (0.7, -0.7)
      saveStartStop = False
      startVal [time (s)] = 2
      text = Press SPACE to continue 
      units = norm
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  Routine instr_1
    TextComponent text_1
      color = yellow
      letterHeight = 0.08
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Before starting the main experiment, we need to do some quick calibrations to ensure your screen is set up correctly.
      units = norm
      wrapWidth = 1.5
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    TextComponent space_2
      color = yellow
      letterHeight = 0.05
      pos = (0.7, -0.7)
      startVal [time (s)] = 2
      text = Press SPACE to continue 
      units = norm
      wrapWidth = 1.5
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    TextComponent text_2
      letterHeight = 0.08
      pos = (0,-0.4)
      startVal [time (s)] = 0.0
      text = Warning! It is critical that these calibrations are done correctly or you will be unable to do the experiment and we will be unable to approve your payment!
      units = norm
      wrapWidth = 1.5
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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  Routine instr_7
    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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    TextComponent space_6
      color = yellow
      letterHeight = 0.05
      pos = (0.7, -0.7)
      startVal [time (s)] = 2
      text = Press SPACE to continue 
      units = norm
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    TextComponent instr_only_2
      color = yellow
      letterHeight = 0.1
      pos = (0, 0.6)
      startVal [time (s)] = 0.0
      text = INSTRUCTIONS ONLY
      units = norm
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    TextComponent text_7
      color = yellow
      letterHeight = 0.06
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1000
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      text:
        3. Stare at the middle of the screen, keeping your head in the same position as before.
        Keep your right eye closed.
    PolygonComponent center_cross
      fillColor = $[1,1,1]
      lineWidth = 1.5
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      units = norm
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  Routine instr_9
    KeyboardComponent key_resp_11
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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    TextComponent space_8
      color = yellow
      letterHeight = 0.05
      pos = (0.7, -0.7)
      startVal [time (s)] = 2
      text = Press SPACE to continue 
      units = norm
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    TextComponent instr_only_4
      color = yellow
      letterHeight = 0.1
      pos = (0, 0.6)
      startVal [time (s)] = 0.0
      text = INSTRUCTIONS ONLY
      units = norm
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    TextComponent text_11
      color = yellow
      letterHeight = 0.06
      pos = (0, -0.5)
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1000
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      text:
        5. During the calibration task, a white ball will disappear as it moves from right to left.
        Keep your right eye closed, stare at the black square and do not move your head.
    PolygonComponent center_cross_2
      fillColor = $[1,1,1]
      lineWidth = 0.8
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      units = norm
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    PolygonComponent black_square1
      fillColor = black
      lineColor = black
      lineWidth = 1.5
      pos = (500,0)
      shape = regular polygon...
      size [set every repeat] = (8.5*ratio_pxpermm, 8.5*ratio_pxpermm)
      startVal [time (s)] = 0.0
      units = pix
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    TextComponent text_12
      color = black
      letterHeight = 0.03
      pos = (0.7, 0.08)
      startVal [time (s)] = 0.0
      text = <--- Ball movement 
      units = norm
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    PolygonComponent white_ball2
      fillColor = white
      nVertices = 1000
      pos = (400, 0)
      shape = regular polygon...
      size [set every repeat] = (8.5*ratio_pxpermm, 8.5*ratio_pxpermm)
      startVal [time (s)] = 0.0
      units = pix
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  Routine stim1_instr
    MovieComponent stim1
      backend = moviepy
      forceEndRoutine = False
      loop = True
      movie = flowerinststim.mp4
      pos = (0, 100)
      size = (700,400)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_14
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
      syncScreenRefresh = False
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    TextComponent space_13
      color = yellow
      letterHeight = 0.05
      pos = (0.7, -0.7)
      startVal [time (s)] = 2
      text = Press SPACE to continue 
      units = norm
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    TextComponent text_16
      color = yellow
      letterHeight = 0.06
      pos = (0, -0.5)
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1000
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      text:
        Throughout the experiment, focus on the cross at the centre of the screen.
        A flower will flash out quickly on the screen.
  Routine stim_response_instr
    MovieComponent movie_2
      backend = moviepy
      forceEndRoutine = False
      loop = True
      movie = flowerinststim.mp4
      pos = (0, 150)
      size = (700,400)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_15
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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    TextComponent space_14
      color = yellow
      letterHeight = 0.05
      pos = (0.7, -0.7)
      startVal [time (s)] = 2
      text = Press SPACE to continue 
      units = norm
      wrapWidth = 1000
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    TextComponent text_17
      color = yellow
      letterHeight = 0.06
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1000
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      text:
        Sometimes you will need to decide the similarity levels of the previous flower to a flower on the next screen.
        Ignore any size differences.

        0 => most similar flower (least different flower)
        7 => most different flower (least similar flower)

        After choosing, move your cursor back to the centre and click and hold the box to continue.
  Routine catch_insrt
    TextComponent space_15
      color = yellow
      letterHeight = 0.05
      pos = (0.7, -0.7)
      startVal [time (s)] = 2
      text = Press SPACE to continue 
      units = norm
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    KeyboardComponent key_resp_17
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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    MovieComponent movie_3
      backend = moviepy
      forceEndRoutine = False
      loop = True
      movie = catchflower.mp4
      pos = (0,100)
      size = (700,400)
      startVal [time (s)] = 0.0
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    TextComponent text_18
      color = yellow
      letterHeight = 0.06
      pos = (0, -0.5)
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1000
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      text:
        Sometimes there will be a special trial where you will just be asked to click on a particular value.
        Please click and hold the value for that trial.
  Routine calibration_example
    PolygonComponent white_ball1
      fillColor = white
      nVertices = 1000
      pos [set every frame] = [((-frameN*((window.innerWidth/2)*0.003))+ballpos), 0]
      shape = regular polygon...
      size [set every frame] = (8.5*ratio_pxpermm, 8.5*ratio_pxpermm)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 250
      units = pix
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    PolygonComponent black_square3
      fillColor = black
      lineColor = black
      lineWidth = 1.5
      pos [set every frame] = ((window.innerWidth/2)*0.8,0)
      shape = regular polygon...
      size [set every repeat] = (8.5*ratio_pxpermm, 8.5*ratio_pxpermm)
      startVal [time (s)] = 0.0
      units = pix
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    TextComponent text_19
      color = green
      letterHeight = 0.05
      pos = (0, 0.5)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 250
      text = VISIBLE
      units = norm
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    TextComponent text_20
      color = red
      letterHeight = 0.05
      pos = (0, 0.5)
      startVal [frame N] = 250
      stopVal [frame N] = 320
      text = INVISIBLE
      units = norm
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    PolygonComponent white_ball12
      fillColor = white
      nVertices = 1000
      pos [set every frame] = [((-frameN*((window.innerWidth/2)*0.003))+((window.innerWidth/2)*0.05)), 0]
      shape = regular polygon...
      size [set every frame] = (8.5*ratio_pxpermm, 8.5*ratio_pxpermm)
      startVal [frame N] = 320
      stopVal [frame N] = 400
      units = pix
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    TextComponent text_21
      color = green
      letterHeight = 0.05
      pos = (0, 0.5)
      startVal [frame N] = 320
      text = VISIBLE
      units = norm
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    TextComponent text_22
      color = green
      letterHeight = 0.05
      pos = (0, -0.5)
      startVal [frame N] = 250
      stopVal [frame N] = 320
      text = Press <ENTER> now!
      units = norm
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    PolygonComponent white_ball13
      fillColor = white
      nVertices = 1000
      pos [set every frame] = [(((-frameN+400)*((window.innerWidth/2)*0.003))+ballpos), 0]
      shape = regular polygon...
      size [set every frame] = (8.5*ratio_pxpermm, 8.5*ratio_pxpermm)
      startVal [frame N] = 400
      stopVal [frame N] = 550
      units = pix
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        ballpos = (window.innerWidth/2)*0.75;
      Each Frame:
        if frameN == 550:
            continueRoutine = False
  Routine response
    MouseComponent mouse
      clickable = response1disk,response3disk,response5disk,response7disk
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Experiment:
        order = randint(1,100);
      Begin Routine:
        # Count trial numbers
        event.clearEvents()
        trialnumber =  trialnumber + 1;
      End Routine:
        # Save similarity rating
        mousexpos=mouse.getPos()[0]  # get x position of mouse
        mouseypos=mouse.getPos()[1]  # get y position of mouse

        # Triangle 7
        x11d = a - b/2;
        y11d = a + b/2;
        x12d = a + b/2;
        y12d = a + b/2;
        x13d = a - b/2;
        y13d = a - b/2;
        a1d = ((y12d - y13d)*(mousexpos - x13d) + (x13d - x12d)*(mouseypos - y13d)) / ((y12d - y13d)*(x11d - x13d)+(x13d - x12d)*(y11d - y13d))
        b1d = ((y13d - y11d)*(mousexpos - x13d) + (x11d - x13d)*(mouseypos - y13d)) / ((y12d - y13d)*(x11d - x13d)+(x13d - x12d)*(y11d - y13d))
        c1d = 1 - a1d - b1d;

        # Triangle 6
        x21d = a - b/2;
        y21d = a - b/2
        x22d = a + b/2
        y22d = a + b/2
        x23d = a + b/2
        y23d = a - b/2
        a2d = ((y22d - y23d)*(mousexpos - x23d) + (x23d - x22d)*(mouseypos - y23d)) / ((y22d - y23d)*(x21d - x23d)+(x23d - x22d)*(y21d - y23d))
        b2d = ((y23d - y21d)*(mousexpos - x23d) + (x21d - x23d)*(mouseypos - y23d)) / ((y22d - y23d)*(x21d - x23d)+(x23d - x22d)*(y21d - y23d))
        c2d = 1 - a2d - b2d

        # Triangle 5
        x31d = a - b/2
        y31d = -(a - b/2)
        x32d = a + b/2
        y32d = -(a - b/2)
        x33d = a + b/2
        y33d = -(a + b/2)
        a3d = ((y32d - y33d)*(mousexpos - x33d) + (x33d - x32d)*(mouseypos - y33d)) / ((y32d - y33d)*(x31d - x33d)+(x33d - x32d)*(y31d - y33d))
        b3d = ((y33d - y31d)*(mousexpos - x33d) + (x31d - x33d)*(mouseypos - y33d)) / ((y32d - y33d)*(x31d - x33d)+(x33d - x32d)*(y31d - y33d))
        c3d = 1 - a3d - b3d


        # Triangle 4
        x41d = a - b/2
        y41d = -(a - b/2)
        x42d = a + b/2
        y42d = -(a + b/2)
        x43d = a - b/2
        y43d = -(a + b/2)
        a4d = ((y42d - y43d)*(mousexpos - x43d) + (x43d - x42d)*(mouseypos - y43d)) / ((y42d - y43d)*(x41d - x43d)+(x43d - x42d)*(y41d - y43d))
        b4d = ((y43d - y41d)*(mousexpos - x43d) + (x41d - x43d)*(mouseypos - y43d)) / ((y42d - y43d)*(x41d - x43d)+(x43d - x42d)*(y41d - y43d))
        c4d = 1 - a4d - b4d

        #  Triangle 3
        x51d = -(a + b/2)
        y51d = -(a + b/2)
        x52d = -(a - b/2)
        y52d = -(a - b/2)
        x53d = -(a - b/2)
        y53d = -(a + b/2)
        a5d = ((y52d - y53d)*(mousexpos - x53d) + (x53d - x52d)*(mouseypos - y53d)) / ((y52d - y53d)*(x51d - x53d)+(x53d - x52d)*(y51d - y53d))
        b5d = ((y53d - y51d)*(mousexpos - x53d) + (x51d - x53d)*(mouseypos - y53d)) / ((y52d - y53d)*(x51d - x53d)+(x53d - x52d)*(y51d - y53d))
        c5d = 1 - a5d - b5d

        # Triangle 2
        x61d = -(a+b/2)
        y61d = -(a-b/2)
        x62d = -(a-b/2)
        y62d = -(a-b/2)
        x63d = -(a+b/2)
        y63d = - (a+b/2)
        a6d = ((y62d - y63d)*(mousexpos - x63d) + (x63d - x62d)*(mouseypos - y63d)) / ((y62d - y63d)*(x61d - x63d)+(x63d - x62d)*(y61d - y63d))
        b6d = ((y63d - y61d)*(mousexpos - x63d) + (x61d - x63d)*(mouseypos - y63d)) / ((y62d - y63d)*(x61d - x63d)+(x63d - x62d)*(y61d - y63d))
        c6d = 1 - a6d - b6d

        # Triangle 1

        x71d = -(a + b/2)
        y71d = a + b/2
        x72d = -(a - b/2)
        y72d = a - b/2
        x73d = -(a + b/2)
        y73d = a - b/2
        a7d = ((y72d - y73d)*(mousexpos - x73d) + (x73d - x72d)*(mouseypos - y73d)) / ((y72d - y73d)*(x71d - x73d)+(x73d - x72d)*(y71d - y73d))
        b7d = ((y73d - y71d)*(mousexpos - x73d) + (x71d - x73d)*(mouseypos - y73d)) / ((y72d - y73d)*(x71d - x73d)+(x73d - x72d)*(y71d - y73d))
        c7d = 1 - a7d - b7d


        # Triangle 0
        x81d = -(a + b/2)
        y81d = a + b/2
        x82d = -(a - b/2)
        y82d = a + b/2
        x83d = -(a - b/2)
        y83d = a - b/2
        a8d = ((y82d - y83d)*(mousexpos - x83d) + (x83d - x82d)*(mouseypos - y83d)) / ((y82d - y83d)*(x81d - x83d)+(x83d - x82d)*(y81d - y83d))
        b8d = ((y83d - y81d)*(mousexpos - x83d) + (x81d - x83d)*(mouseypos - y83d)) / ((y82d - y83d)*(x81d - x83d)+(x83d - x82d)*(y81d - y83d))
        c8d = 1 - a8d - b8d

        if (0 <= a1d <= 1) and (0 <= b1d <= 1) and (0 <= c1d <= 1):
            similarity = 7
        elif (0 <= a2d <= 1) and (0 <= b2d <= 1) and (0 <= c2d <= 1):
            similarity = 6
        elif (0 <= a3d <= 1) and (0 <= b3d <= 1) and (0 <= c3d <= 1):
            similarity = 5
        elif (0 <= a4d <= 1) and (0 <= b4d <= 1) and (0 <= c4d <= 1):
            similarity = 4
        elif (0 <= a5d <= 1) and (0 <= b5d <= 1) and (0 <= c5d <= 1):
            similarity = 3
        elif (0 <= a6d <= 1) and (0 <= b6d <= 1) and (0 <= c6d <= 1):
            similarity = 2
        elif (0 <= a7d <= 1) and (0 <= b7d <= 1) and (0 <= c7d <= 1):
            similarity = 1
        elif (0 <= a8d <= 1) and (0 <= b8d <= 1) and (0 <= c8d <= 1):
            similarity = 0

        flower1.setAutoDraw(false)
        flower2.setAutoDraw(false)
        flower3.setAutoDraw(false)
        flower4.setAutoDraw(false)
        flower5.setAutoDraw(false)
        flower6.setAutoDraw(false)
        flower7.setAutoDraw(false)
        flower8.setAutoDraw(false)
        flower9.setAutoDraw(false)

        thisExp.addData("Flower2", Flower2);
        thisExp.addData("Ecc", Ecc);
        thisExp.addData("similarity", similarity);
        thisExp.addData("response_time", mouse.mouseClock.getTime())  # Save time relative to start of mouse
        thisExp.addData("trialnumber", trialnumber);
    ImageComponent response1disk
      image = response67.png
      pos = a,a
      size = b,b
      startVal [time (s)] = 0.0
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    ImageComponent response3disk
      image = response45.png
      pos = a,-a
      size = b,b
      startVal [time (s)] = 0.0
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    ImageComponent response5disk
      image = response23.png
      pos = -a,-a
      size = b,b
      startVal [time (s)] = 0.0
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    ImageComponent response7disk
      image = response01.png
      pos = -a,a
      size = b,b
      startVal [time (s)] = 0.0
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    TextComponent text_23
      color = black
      letterHeight = 0.05
      pos = (0, -0.6)
      startVal [time (s)] = 0.0
      units = norm
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      text:
        Please choose the similarity level of the flower with the previously cued flower.
        Please click and hold to indicate your choice.
        0 => Most similar
        7 => Most different
    CodeComponent code_28
      Code Type = Auto->JS
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      Each Frame:
         #Set circle colour
        if Flower2 == 1:
            flower1.setPos([0, 0])
            flower1.setDepth(5)
            flower1.setSize((15*ratio_pxpermm, 15*ratio_pxpermm))
            flower1.setAutoDraw(true)
        elif Flower2 == 2:
            flower2.setPos([0, 0])
            flower2.setDepth(5)
            flower2.setSize((15*ratio_pxpermm, 15*ratio_pxpermm))
            flower2.setAutoDraw(true)
        elif Flower2 == 3:
            flower3.setPos([0, 0])
            flower3.setDepth(5)
            flower3.setSize((15*ratio_pxpermm, 15*ratio_pxpermm))
            flower3.setAutoDraw(true)
        elif Flower2 == 4:
            flower4.setPos([0, 0])
            flower4.setDepth(5)
            flower4.setSize((15*ratio_pxpermm, 15*ratio_pxpermm))
            flower4.setAutoDraw(true)
        elif Flower2 == 5:
            flower5.setPos(0, 0)
            flower5.setDepth(5)
            flower5.setSize((15*ratio_pxpermm, 15*ratio_pxpermm))
            flower5.setAutoDraw(true)
        elif Flower2== 6:
            flower6.setPos([0, 0])
            flower6.setDepth(5)
            flower6.setSize((15*ratio_pxpermm, 15*ratio_pxpermm))
            flower6.setAutoDraw(true)
        elif Flower2== 7:
            flower7.setPos([0, 0])
            flower7.setDepth(5)
            flower7.setSize((15*ratio_pxpermm, 15*ratio_pxpermm))
            flower7.setAutoDraw(true)
        elif Flower2 == 8:
            flower8.setPos([0, 0])
            flower8.setDepth(5)
            flower8.setSize((15*ratio_pxpermm, 15*ratio_pxpermm))
            flower8.setAutoDraw(true)
        elif Flower2 == 9:
            flower9.setPos([0, 0])
            flower9.setDepth(5)
            flower9.setSize((15*ratio_pxpermm, 15*ratio_pxpermm))
            flower9.setAutoDraw(true)
  Routine Stim1_display
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        # Circle position and size
        timer = util.Clock()


        x = 1
        y = 1

        angle_1 = randint(-30,30);
        angle_2 = angle_1 + 180;

        theta_1 = (angle_1)*(pi/180)
        theta_2 = (angle_2)*(pi/180)

        deltax_1 = radius_F*cos(theta_1)
        deltay_1 = radius_F*sin(theta_1)
        deltax_2 = radius_P*cos(theta_2)
        deltay_2 = radius_P*sin(theta_2)


        a_1 = x + deltax_1
        b_1 = y + deltay_1
        a_2 = x + deltax_2
        b_2 = y + deltay_2


        # Set circle position and size
        if Ecc == 'FF':
            circle1posx = a_1;
            circle1posy = b_1;
            circlesizeh = 2 *r_F;
            circlesizew = 2 * r_F;
        elif Ecc == 'PF':
                circle1posx = a_2;
                circle1posy = b_2;
                circlesizeh = 2 * R_P;
                circlesizew = 2 * R_P;


        # Set circle colour
        if Flower1 == 1:
            flower1.setPos([circle1posx,circle1posy])
            flower1.setSize(circlesizeh,circlesizew)
            flower1.setAutoDraw(true)
        elif Flower1 == 2:
            flower2.setPos([circle1posx,circle1posy])
            flower2.setSize(circlesizeh,circlesizew)
            flower2.setAutoDraw(true)
        elif Flower1 == 3:
            flower3.setPos([circle1posx,circle1posy])
            flower3.setSize(circlesizeh,circlesizew)
            flower3.setAutoDraw(true)
        elif Flower1 == 4:
            flower4.setPos([circle1posx,circle1posy])
            flower4.setSize(circlesizeh,circlesizew)
            flower4.setAutoDraw(true)
        elif Flower1 == 5:
            flower5.setPos([circle1posx,circle1posy])
            flower5.setSize(circlesizeh,circlesizew)
            flower5.setAutoDraw(true)
        elif Flower1== 6:
            flower6.setPos([circle1posx,circle1posy])
            flower6.setSize(circlesizeh,circlesizew)
            flower6.setAutoDraw(true)
        elif Flower1== 7:
            flower7.setPos([circle1posx,circle1posy])
            flower7.setSize(circlesizeh,circlesizew)
            flower7.setAutoDraw(true)
        elif Flower1 == 8:
            flower8.setPos([circle1posx,circle1posy])
            flower8.setSize(circlesizeh,circlesizew)
            flower8.setAutoDraw(true)
        elif Flower1 == 9:
            flower9.setPos([circle1posx,circle1posy])
            flower9.setSize(circlesizeh,circlesizew)
            flower9.setAutoDraw(true)
      Each Frame:
        if timer.getTime() >= 0.25:
            flower1.setAutoDraw(false)
            flower2.setAutoDraw(false)
            flower3.setAutoDraw(false)
            flower4.setAutoDraw(false)
            flower5.setAutoDraw(false)
            flower6.setAutoDraw(false)
            flower7.setAutoDraw(false)
            flower8.setAutoDraw(false)
            flower9.setAutoDraw(false)
      End Routine:
        thisExp.addData("Flower1", Flower1);
        thisExp.addData("Ecc", Ecc);
    PolygonComponent centre_cross4
      fillColor = $[1,1,1]
      lineWidth = 1.5
      shape = cross
      size = (0.03, 0.03)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.500
      units = norm
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  Routine response_2
    MouseComponent mouse_2
      clickable = rectangle
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    ImageComponent response1disk_2
      image = response67.png
      pos = a,a
      size = b,b
      startVal [time (s)] = 0.0
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    ImageComponent response3disk_2
      image = response45.png
      pos = a,-a
      size = b,b
      startVal [time (s)] = 0.0
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    ImageComponent response5disk_2
      image = response23.png
      pos = -a,-a
      size = b,b
      startVal [time (s)] = 0.0
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    ImageComponent response7disk_2
      image = response01.png
      pos = -a,a
      size = b,b
      startVal [time (s)] = 0.0
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    PolygonComponent rectangle
      fillColor [set every repeat] = $grey
      nVertices = 1000
      shape = rectangle
      size = (0.100, 0.080)
      startVal [time (s)] = 0.0
      units = norm
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Experiment:
        trialnumber = 0;
        grey = (.2, .2, .2);
      Begin Routine:
        trialnumbertext = f'You have finished {trialnumber} of 324 questions';

        event.clearEvents()
    TextComponent text_25
      color = black
      letterHeight = 0.05
      pos = (0, -0.5)
      startVal [time (s)] = 0.0
      text = Please click and hold the grey rectangle in the middle of the response numbers to continue
      units = norm
      wrapWidth = 1000
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    TextComponent text_24
      color = black
      letterHeight = 0.05
      pos = (0, -0.7)
      startVal [time (s)] = 0.0
      text [set every repeat] = $trialnumbertext
      units = norm
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  Routine catch_1
    MouseComponent mouse_3
      clickable = response1disk_3,response3disk_3,response5disk_3,response7disk_3,
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    ImageComponent response1disk_3
      image = response67.png
      pos = a,a
      size = b,b
      startVal [time (s)] = 0.0
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    ImageComponent response3disk_3
      image = response45.png
      pos = a,-a
      size = b,b
      startVal [time (s)] = 0.0
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    ImageComponent response5disk_3
      image = response23.png
      pos = -a,-a
      size = b,b
      startVal [time (s)] = 0.0
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    ImageComponent response7disk_3
      image = response01.png
      pos = -a,a
      size = b,b
      startVal [time (s)] = 0.0
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Experiment:
        catchtrialorder = []
        for i in range(0,20):
            n = randint(0,324)
            catchtrialorder.append(n)
      Begin Routine:
        # Select random number for catch trial

        catchnumber = randint(0,7);

        event.clearEvents()

        catchtext = f'SPECIAL TRIAL PLEASE CLICK AND HOLD {catchnumber}'
      Each Frame:
        # Run catch trials
        if not ((trialnumber == catchtrialorder[0]) or (trialnumber == catchtrialorder[1]) or (trialnumber == catchtrialorder[2]) or (trialnumber == catchtrialorder[3]) or (trialnumber == catchtrialorder[4]) or (trialnumber == catchtrialorder[5]) or (trialnumber == catchtrialorder[6]) or (trialnumber == catchtrialorder[7]) or (trialnumber == catchtrialorder[8]) or (trialnumber == catchtrialorder[9]) or (trialnumber == catchtrialorder[10]) or (trialnumber == catchtrialorder[11]) or (trialnumber == catchtrialorder[12]) or (trialnumber == catchtrialorder[13]) or (trialnumber == catchtrialorder[14]) or (trialnumber == catchtrialorder[15]) or (trialnumber == catchtrialorder[16]) or (trialnumber == catchtrialorder[17]) or (trialnumber == catchtrialorder[18]) or (trialnumber == catchtrialorder[19])):
            continueRoutine=False
      End Routine:
        # Save similarity rating
        mousexpos=mouse.getPos()[0]  # get x position of mouse
        mouseypos=mouse.getPos()[1]  # get y position of mouse

        # Triangle 7
        x11d = a - b/2;
        y11d = a + b/2;
        x12d = a + b/2;
        y12d = a + b/2;
        x13d = a - b/2;
        y13d = a - b/2;
        a1d = ((y12d - y13d)*(mousexpos - x13d) + (x13d - x12d)*(mouseypos - y13d)) / ((y12d - y13d)*(x11d - x13d)+(x13d - x12d)*(y11d - y13d))
        b1d = ((y13d - y11d)*(mousexpos - x13d) + (x11d - x13d)*(mouseypos - y13d)) / ((y12d - y13d)*(x11d - x13d)+(x13d - x12d)*(y11d - y13d))
        c1d = 1 - a1d - b1d;

        # Triangle 6
        x21d = a - b/2;
        y21d = a - b/2
        x22d = a + b/2
        y22d = a + b/2
        x23d = a + b/2
        y23d = a - b/2
        a2d = ((y22d - y23d)*(mousexpos - x23d) + (x23d - x22d)*(mouseypos - y23d)) / ((y22d - y23d)*(x21d - x23d)+(x23d - x22d)*(y21d - y23d))
        b2d = ((y23d - y21d)*(mousexpos - x23d) + (x21d - x23d)*(mouseypos - y23d)) / ((y22d - y23d)*(x21d - x23d)+(x23d - x22d)*(y21d - y23d))
        c2d = 1 - a2d - b2d

        # Triangle 5
        x31d = a - b/2
        y31d = -(a - b/2)
        x32d = a + b/2
        y32d = -(a - b/2)
        x33d = a + b/2
        y33d = -(a + b/2)
        a3d = ((y32d - y33d)*(mousexpos - x33d) + (x33d - x32d)*(mouseypos - y33d)) / ((y32d - y33d)*(x31d - x33d)+(x33d - x32d)*(y31d - y33d))
        b3d = ((y33d - y31d)*(mousexpos - x33d) + (x31d - x33d)*(mouseypos - y33d)) / ((y32d - y33d)*(x31d - x33d)+(x33d - x32d)*(y31d - y33d))
        c3d = 1 - a3d - b3d


        # Triangle 4
        x41d = a - b/2
        y41d = -(a - b/2)
        x42d = a + b/2
        y42d = -(a + b/2)
        x43d = a - b/2
        y43d = -(a + b/2)
        a4d = ((y42d - y43d)*(mousexpos - x43d) + (x43d - x42d)*(mouseypos - y43d)) / ((y42d - y43d)*(x41d - x43d)+(x43d - x42d)*(y41d - y43d))
        b4d = ((y43d - y41d)*(mousexpos - x43d) + (x41d - x43d)*(mouseypos - y43d)) / ((y42d - y43d)*(x41d - x43d)+(x43d - x42d)*(y41d - y43d))
        c4d = 1 - a4d - b4d

        #  Triangle 3
        x51d = -(a + b/2)
        y51d = -(a + b/2)
        x52d = -(a - b/2)
        y52d = -(a - b/2)
        x53d = -(a - b/2)
        y53d = -(a + b/2)
        a5d = ((y52d - y53d)*(mousexpos - x53d) + (x53d - x52d)*(mouseypos - y53d)) / ((y52d - y53d)*(x51d - x53d)+(x53d - x52d)*(y51d - y53d))
        b5d = ((y53d - y51d)*(mousexpos - x53d) + (x51d - x53d)*(mouseypos - y53d)) / ((y52d - y53d)*(x51d - x53d)+(x53d - x52d)*(y51d - y53d))
        c5d = 1 - a5d - b5d

        # Triangle 2
        x61d = -(a+b/2)
        y61d = -(a+b/2)
        x62d = -(a-b/2)
        y62d = -(a-b/2)
        x63d = -(a+b/2)
        y63d = - (a+b/2)
        a6d = ((y62d - y63d)*(mousexpos - x63d) + (x63d - x62d)*(mouseypos - y63d)) / ((y62d - y63d)*(x61d - x63d)+(x63d - x62d)*(y61d - y63d))
        b6d = ((y63d - y61d)*(mousexpos - x63d) + (x61d - x63d)*(mouseypos - y63d)) / ((y62d - y63d)*(x61d - x63d)+(x63d - x62d)*(y61d - y63d))
        c6d = 1 - a6d - b6d

        # Triangle 1

        x71d = -(a + b/2)
        y71d = a + b/2
        x72d = -(a - b/2)
        y72d = a - b/2
        x73d = -(a + b/2)
        y73d = a - b/2
        a7d = ((y72d - y73d)*(mousexpos - x73d) + (x73d - x72d)*(mouseypos - y73d)) / ((y72d - y73d)*(x71d - x73d)+(x73d - x72d)*(y71d - y73d))
        b7d = ((y73d - y71d)*(mousexpos - x73d) + (x71d - x73d)*(mouseypos - y73d)) / ((y72d - y73d)*(x71d - x73d)+(x73d - x72d)*(y71d - y73d))
        c7d = 1 - a7d - b7d


        # Triangle 0
        x81d = -(a + b/2)
        y81d = a + b/2
        x82d = -(a - b/2)
        y82d = a + b/2
        x83d = -(a - b/2)
        y83d = a - b/2
        a8d = ((y82d - y83d)*(mousexpos - x83d) + (x83d - x82d)*(mouseypos - y83d)) / ((y82d - y83d)*(x81d - x83d)+(x83d - x82d)*(y81d - y83d))
        b8d = ((y83d - y81d)*(mousexpos - x83d) + (x81d - x83d)*(mouseypos - y83d)) / ((y82d - y83d)*(x81d - x83d)+(x83d - x82d)*(y81d - y83d))
        c8d = 1 - a8d - b8d





        if (0 <= a1d <= 1) and (0 <= b1d <= 1) and (0 <= c1d <= 1):
            catchresponse  = 7
        elif (0 <= a2d <= 1) and (0 <= b2d <= 1) and (0 <= c2d <= 1):
            catchresponse  = 6
        elif (0 <= a3d <= 1) and (0 <= b3d <= 1) and (0 <= c3d <= 1):
            catchresponse  = 5
        elif (0 <= a4d <= 1) and (0 <= b4d <= 1) and (0 <= c4d <= 1):
            catchresponse  = 4
        elif (0 <= a5d <= 1) and (0 <= b5d <= 1) and (0 <= c5d <= 1):
            catchresponse  = 3
        elif (0 <= a6d <= 1) and (0 <= b6d <= 1) and (0 <= c6d <= 1):
            catchresponse  = 2
        elif (0 <= a7d <= 1) and (0 <= b7d <= 1) and (0 <= c7d <= 1):
            catchresponse  = 1
        elif (0 <= a8d <= 1) and (0 <= b8d <= 1) and (0 <= c8d <= 1):
            catchresponse = 0


        thisExp.addData("catchresponse", catchresponse);
        thisExp.addData("catchnumber", catchnumber);
        thisExp.addData("catchtrialorder", catchtrialorder);
    TextComponent text_26
      color = black
      letterHeight = 0.05
      pos = (0, -0.6)
      startVal [time (s)] = 0.0
      text [set every repeat] = $catchtext
      units = norm
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    PolygonComponent rectangle_2
      fillColor = $grey
      nVertices = 1000
      shape = rectangle
      size = (0.100, 0.080)
      startVal [time (s)] = 0.0
      units = norm
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  Routine startup
    CodeComponent code_7
      Code Type = Auto->JS
      Begin Experiment:
        import pandas as pd
        from psychopy import tools
        import random as rnd
        rnd.seed()
    CodeComponent js_code1
      Code Type = Auto->JS
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
  Routine Stim1_display_prac
    CodeComponent code_9
      Code Type = Auto->JS
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      Begin Routine:
        # Circle position and size

        timer = util.Clock()

        # Set up angle placement
        angle_1 = randint(-30,30);
        angle_2 = angle_1 + 180;

        x = 1
        y = 1

        theta_1 = (angle_1)*(pi/180)
        theta_2 = (angle_2)*(pi/180)

        deltax_1 = radius_F*cos(theta_1)
        deltay_1 = radius_F*sin(theta_1)
        deltax_2 = radius_P*cos(theta_2)
        deltay_2 = radius_P*sin(theta_2)


        a_1 = x + deltax_1
        b_1 = y + deltay_1
        a_2 = x + deltax_2
        b_2 = y + deltay_2


        # Set circle position
        if Ecc == 'FF':
            circle1posx = a_1;
            circle1posy = b_1;
            circlesizeh = 2 *r_F;
            circlesizew = 2 * r_F;
        elif Ecc == 'PF':
                circle1posx = a_2;
                circle1posy = b_2;
                circlesizeh = 2 * R_P;
                circlesizew = 2 * R_P;

        # Randomly select circle colour

        Flower_1 = randint(1,9);

        # Set circle colour
        if Flower_1 == 1:
            flower1.setPos([circle1posx,circle1posy])
            flower1.setSize(circlesizeh,circlesizew)
            flower1.setAutoDraw(true)
        elif Flower_1 == 2:
            flower2.setPos([circle1posx,circle1posy])
            flower2.setSize(circlesizeh,circlesizew)
            flower2.setAutoDraw(true)
        elif Flower_1 == 3:
            flower3.setPos([circle1posx,circle1posy])
            flower3.setSize(circlesizeh,circlesizew)
            flower3.setAutoDraw(true)
        elif Flower_1 == 4:
            flower4.setPos([circle1posx,circle1posy])
            flower4.setSize(circlesizeh,circlesizew)
            flower4.setAutoDraw(true)
        elif Flower_1 == 5:
            flower5.setPos([circle1posx,circle1posy])
            flower5.setSize(circlesizeh,circlesizew)
            flower5.setAutoDraw(true)
        elif Flower_1== 6:
            flower6.setPos([circle1posx,circle1posy])
            flower6.setSize(circlesizeh,circlesizew)
            flower6.setAutoDraw(true)
        elif Flower_1== 7:
            flower7.setPos([circle1posx,circle1posy])
            flower7.setSize(circlesizeh,circlesizew)
            flower7.setAutoDraw(true)
        elif Flower_1 == 8:
            flower8.setPos([circle1posx,circle1posy])
            flower8.setSize(circlesizeh,circlesizew)
            flower8.setAutoDraw(true)
        elif Flower_1 == 9:
            flower9.setPos([circle1posx,circle1posy])
            flower9.setSize(circlesizeh,circlesizew)
            flower9.setAutoDraw(true)
      Each Frame:
        if timer.getTime() >= 0.25:
            flower1.setAutoDraw(false)
            flower2.setAutoDraw(false)
            flower3.setAutoDraw(false)
            flower4.setAutoDraw(false)
            flower5.setAutoDraw(false)
            flower6.setAutoDraw(false)
            flower7.setAutoDraw(false)
            flower8.setAutoDraw(false)
            flower9.setAutoDraw(false)
      End Routine:
        thisExp.addData("Flower1", Flower_1);
        thisExp.addData("Ecc", Ecc);
    PolygonComponent centre_cross4_2
      fillColor = $[1,1,1]
      lineWidth = 1.5
      shape = cross
      size = (0.03, 0.03)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.500
      units = norm
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  Routine response_prac
    CodeComponent code_10
      Code Type = Auto->JS
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      Begin Experiment:
        # Set response size
        a = (screen.size[0]/2)*0.10;
        b = (screen.size[0]/2)*0.158
      Begin Routine:
        event.clearEvents()

        # Count trial numbers

        pracnumber =  pracnumber + 1;

        # Randomly select circle colour

        Flower_2 = randint(1,9);

        # Set circle colour
      Each Frame:
        # Similarity for feedback
        mousexpos=mouse.getPos()[0]  # get x position of mouse
        mouseypos=mouse.getPos()[1]  # get y position of mouse

        # Triangle 7
        x11d = a - b/2;
        y11d = a + b/2;
        x12d = a + b/2;
        y12d = a + b/2;
        x13d = a - b/2;
        y13d = a - b/2;
        a1d = ((y12d - y13d)*(mousexpos - x13d) + (x13d - x12d)*(mouseypos - y13d)) / ((y12d - y13d)*(x11d - x13d)+(x13d - x12d)*(y11d - y13d))
        b1d = ((y13d - y11d)*(mousexpos - x13d) + (x11d - x13d)*(mouseypos - y13d)) / ((y12d - y13d)*(x11d - x13d)+(x13d - x12d)*(y11d - y13d))
        c1d = 1 - a1d - b1d;

        # Triangle 6
        x21d = a - b/2;
        y21d = a - b/2
        x22d = a + b/2
        y22d = a + b/2
        x23d = a + b/2
        y23d = a - b/2
        a2d = ((y22d - y23d)*(mousexpos - x23d) + (x23d - x22d)*(mouseypos - y23d)) / ((y22d - y23d)*(x21d - x23d)+(x23d - x22d)*(y21d - y23d))
        b2d = ((y23d - y21d)*(mousexpos - x23d) + (x21d - x23d)*(mouseypos - y23d)) / ((y22d - y23d)*(x21d - x23d)+(x23d - x22d)*(y21d - y23d))
        c2d = 1 - a2d - b2d

        # Triangle 5
        x31d = a - b/2
        y31d = -(a - b/2)
        x32d = a + b/2
        y32d = -(a - b/2)
        x33d = a + b/2
        y33d = -(a + b/2)
        a3d = ((y32d - y33d)*(mousexpos - x33d) + (x33d - x32d)*(mouseypos - y33d)) / ((y32d - y33d)*(x31d - x33d)+(x33d - x32d)*(y31d - y33d))
        b3d = ((y33d - y31d)*(mousexpos - x33d) + (x31d - x33d)*(mouseypos - y33d)) / ((y32d - y33d)*(x31d - x33d)+(x33d - x32d)*(y31d - y33d))
        c3d = 1 - a3d - b3d


        # Triangle 4
        x41d = a - b/2
        y41d = -(a - b/2)
        x42d = a + b/2
        y42d = -(a + b/2)
        x43d = a - b/2
        y43d = -(a + b/2)
        a4d = ((y42d - y43d)*(mousexpos - x43d) + (x43d - x42d)*(mouseypos - y43d)) / ((y42d - y43d)*(x41d - x43d)+(x43d - x42d)*(y41d - y43d))
        b4d = ((y43d - y41d)*(mousexpos - x43d) + (x41d - x43d)*(mouseypos - y43d)) / ((y42d - y43d)*(x41d - x43d)+(x43d - x42d)*(y41d - y43d))
        c4d = 1 - a4d - b4d

        #  Triangle 3
        x51d = -(a + b/2)
        y51d = -(a + b/2)
        x52d = -(a - b/2)
        y52d = -(a - b/2)
        x53d = -(a - b/2)
        y53d = -(a + b/2)
        a5d = ((y52d - y53d)*(mousexpos - x53d) + (x53d - x52d)*(mouseypos - y53d)) / ((y52d - y53d)*(x51d - x53d)+(x53d - x52d)*(y51d - y53d))
        b5d = ((y53d - y51d)*(mousexpos - x53d) + (x51d - x53d)*(mouseypos - y53d)) / ((y52d - y53d)*(x51d - x53d)+(x53d - x52d)*(y51d - y53d))
        c5d = 1 - a5d - b5d

        # Triangle 2
        x61d = -(a+b/2)
        y61d = -(a-b/2)
        x62d = -(a-b/2)
        y62d = -(a-b/2)
        x63d = -(a+b/2)
        y63d = - (a+b/2)
        a6d = ((y62d - y63d)*(mousexpos - x63d) + (x63d - x62d)*(mouseypos - y63d)) / ((y62d - y63d)*(x61d - x63d)+(x63d - x62d)*(y61d - y63d))
        b6d = ((y63d - y61d)*(mousexpos - x63d) + (x61d - x63d)*(mouseypos - y63d)) / ((y62d - y63d)*(x61d - x63d)+(x63d - x62d)*(y61d - y63d))
        c6d = 1 - a6d - b6d

        # Triangle 1

        x71d = -(a + b/2)
        y71d = a + b/2
        x72d = -(a - b/2)
        y72d = a - b/2
        x73d = -(a + b/2)
        y73d = a - b/2
        a7d = ((y72d - y73d)*(mousexpos - x73d) + (x73d - x72d)*(mouseypos - y73d)) / ((y72d - y73d)*(x71d - x73d)+(x73d - x72d)*(y71d - y73d))
        b7d = ((y73d - y71d)*(mousexpos - x73d) + (x71d - x73d)*(mouseypos - y73d)) / ((y72d - y73d)*(x71d - x73d)+(x73d - x72d)*(y71d - y73d))
        c7d = 1 - a7d - b7d


        # Triangle 0
        x81d = -(a + b/2)
        y81d = a + b/2
        x82d = -(a - b/2)
        y82d = a + b/2
        x83d = -(a - b/2)
        y83d = a - b/2
        a8d = ((y82d - y83d)*(mousexpos - x83d) + (x83d - x82d)*(mouseypos - y83d)) / ((y82d - y83d)*(x81d - x83d)+(x83d - x82d)*(y81d - y83d))
        b8d = ((y83d - y81d)*(mousexpos - x83d) + (x81d - x83d)*(mouseypos - y83d)) / ((y82d - y83d)*(x81d - x83d)+(x83d - x82d)*(y81d - y83d))
        c8d = 1 - a8d - b8d


        if (0 <= a1d <= 1) and (0 <= b1d <= 1) and (0 <= c1d <= 1):
            similarity = 7
            responsenumber = 7
        elif (0 <= a2d <= 1) and (0 <= b2d <= 1) and (0 <= c2d <= 1):
            similarity = 6
            responsenumber = 6
        elif (0 <= a3d <= 1) and (0 <= b3d <= 1) and (0 <= c3d <= 1):
            similarity = 5
            responsenumber = 5
        elif (0 <= a4d <= 1) and (0 <= b4d <= 1) and (0 <= c4d <= 1):
            similarity = 4
            responsenumber = 4
        elif (0 <= a5d <= 1) and (0 <= b5d <= 1) and (0 <= c5d <= 1):
            similarity = 3
            responsenumber = 3
        elif (0 <= a6d <= 1) and (0 <= b6d <= 1) and (0 <= c6d <= 1):
            similarity = 2
            responsenumber = 2
        elif (0 <= a7d <= 1) and (0 <= b7d <= 1) and (0 <= c7d <= 1):
            similarity = 1
            responsenumber = 1
        elif (0 <= a8d <= 1) and (0 <= b8d <= 1) and (0 <= c8d <= 1):
            similarity = 0
            responsenumber = 0
      End Routine:
        # Save similarity rating
        mousexpos=mouse.getPos()[0]  # get x position of mouse
        mouseypos=mouse.getPos()[1]  # get y position of mouse

        # Triangle 7
        x11d = a - b/2;
        y11d = a + b/2;
        x12d = a + b/2;
        y12d = a + b/2;
        x13d = a - b/2;
        y13d = a - b/2;
        a1d = ((y12d - y13d)*(mousexpos - x13d) + (x13d - x12d)*(mouseypos - y13d)) / ((y12d - y13d)*(x11d - x13d)+(x13d - x12d)*(y11d - y13d))
        b1d = ((y13d - y11d)*(mousexpos - x13d) + (x11d - x13d)*(mouseypos - y13d)) / ((y12d - y13d)*(x11d - x13d)+(x13d - x12d)*(y11d - y13d))
        c1d = 1 - a1d - b1d;

        # Triangle 6
        x21d = a - b/2;
        y21d = a - b/2
        x22d = a + b/2
        y22d = a + b/2
        x23d = a + b/2
        y23d = a - b/2
        a2d = ((y22d - y23d)*(mousexpos - x23d) + (x23d - x22d)*(mouseypos - y23d)) / ((y22d - y23d)*(x21d - x23d)+(x23d - x22d)*(y21d - y23d))
        b2d = ((y23d - y21d)*(mousexpos - x23d) + (x21d - x23d)*(mouseypos - y23d)) / ((y22d - y23d)*(x21d - x23d)+(x23d - x22d)*(y21d - y23d))
        c2d = 1 - a2d - b2d

        # Triangle 5
        x31d = a - b/2
        y31d = -(a - b/2)
        x32d = a + b/2
        y32d = -(a - b/2)
        x33d = a + b/2
        y33d = -(a + b/2)
        a3d = ((y32d - y33d)*(mousexpos - x33d) + (x33d - x32d)*(mouseypos - y33d)) / ((y32d - y33d)*(x31d - x33d)+(x33d - x32d)*(y31d - y33d))
        b3d = ((y33d - y31d)*(mousexpos - x33d) + (x31d - x33d)*(mouseypos - y33d)) / ((y32d - y33d)*(x31d - x33d)+(x33d - x32d)*(y31d - y33d))
        c3d = 1 - a3d - b3d


        # Triangle 4
        x41d = a - b/2
        y41d = -(a - b/2)
        x42d = a + b/2
        y42d = -(a + b/2)
        x43d = a - b/2
        y43d = -(a + b/2)
        a4d = ((y42d - y43d)*(mousexpos - x43d) + (x43d - x42d)*(mouseypos - y43d)) / ((y42d - y43d)*(x41d - x43d)+(x43d - x42d)*(y41d - y43d))
        b4d = ((y43d - y41d)*(mousexpos - x43d) + (x41d - x43d)*(mouseypos - y43d)) / ((y42d - y43d)*(x41d - x43d)+(x43d - x42d)*(y41d - y43d))
        c4d = 1 - a4d - b4d

        #  Triangle 3
        x51d = -(a + b/2)
        y51d = -(a + b/2)
        x52d = -(a - b/2)
        y52d = -(a - b/2)
        x53d = -(a - b/2)
        y53d = -(a + b/2)
        a5d = ((y52d - y53d)*(mousexpos - x53d) + (x53d - x52d)*(mouseypos - y53d)) / ((y52d - y53d)*(x51d - x53d)+(x53d - x52d)*(y51d - y53d))
        b5d = ((y53d - y51d)*(mousexpos - x53d) + (x51d - x53d)*(mouseypos - y53d)) / ((y52d - y53d)*(x51d - x53d)+(x53d - x52d)*(y51d - y53d))
        c5d = 1 - a5d - b5d

        # Triangle 2
        x61d = -(a+b/2)
        y61d = -(a-b/2)
        x62d = -(a-b/2)
        y62d = -(a-b/2)
        x63d = -(a+b/2)
        y63d = - (a+b/2)
        a6d = ((y62d - y63d)*(mousexpos - x63d) + (x63d - x62d)*(mouseypos - y63d)) / ((y62d - y63d)*(x61d - x63d)+(x63d - x62d)*(y61d - y63d))
        b6d = ((y63d - y61d)*(mousexpos - x63d) + (x61d - x63d)*(mouseypos - y63d)) / ((y62d - y63d)*(x61d - x63d)+(x63d - x62d)*(y61d - y63d))
        c6d = 1 - a6d - b6d

        # Triangle 1

        x71d = -(a + b/2)
        y71d = a + b/2
        x72d = -(a - b/2)
        y72d = a - b/2
        x73d = -(a + b/2)
        y73d = a - b/2
        a7d = ((y72d - y73d)*(mousexpos - x73d) + (x73d - x72d)*(mouseypos - y73d)) / ((y72d - y73d)*(x71d - x73d)+(x73d - x72d)*(y71d - y73d))
        b7d = ((y73d - y71d)*(mousexpos - x73d) + (x71d - x73d)*(mouseypos - y73d)) / ((y72d - y73d)*(x71d - x73d)+(x73d - x72d)*(y71d - y73d))
        c7d = 1 - a7d - b7d


        # Triangle 0
        x81d = -(a + b/2)
        y81d = a + b/2
        x82d = -(a - b/2)
        y82d = a + b/2
        x83d = -(a - b/2)
        y83d = a - b/2
        a8d = ((y82d - y83d)*(mousexpos - x83d) + (x83d - x82d)*(mouseypos - y83d)) / ((y82d - y83d)*(x81d - x83d)+(x83d - x82d)*(y81d - y83d))
        b8d = ((y83d - y81d)*(mousexpos - x83d) + (x81d - x83d)*(mouseypos - y83d)) / ((y82d - y83d)*(x81d - x83d)+(x83d - x82d)*(y81d - y83d))
        c8d = 1 - a8d - b8d


        if (0 <= a1d <= 1) and (0 <= b1d <= 1) and (0 <= c1d <= 1):
            similarity = 7
        elif (0 <= a2d <= 1) and (0 <= b2d <= 1) and (0 <= c2d <= 1):
            similarity = 6
        elif (0 <= a3d <= 1) and (0 <= b3d <= 1) and (0 <= c3d <= 1):
            similarity = 5
        elif (0 <= a4d <= 1) and (0 <= b4d <= 1) and (0 <= c4d <= 1):
            similarity = 4
        elif (0 <= a5d <= 1) and (0 <= b5d <= 1) and (0 <= c5d <= 1):
            similarity = 3
        elif (0 <= a6d <= 1) and (0 <= b6d <= 1) and (0 <= c6d <= 1):
            similarity = 2
        elif (0 <= a7d <= 1) and (0 <= b7d <= 1) and (0 <= c7d <= 1):
            similarity = 1
        elif (0 <= a8d <= 1) and (0 <= b8d <= 1) and (0 <= c8d <= 1):
            similarity = 0

        flower1.setAutoDraw(false)
        flower2.setAutoDraw(false)
        flower3.setAutoDraw(false)
        flower4.setAutoDraw(false)
        flower5.setAutoDraw(false)
        flower6.setAutoDraw(false)
        flower7.setAutoDraw(false)
        flower8.setAutoDraw(false)
        flower9.setAutoDraw(false)



        thisExp.addData("Flower_2", Flower_2);
        thisExp.addData("similarity", similarity);
        thisExp.addData("response_time", mouse_5.mouseClock.getTime())  # Save time relative to start of mouse
    MouseComponent mouse_5
      clickable = response1disk_5,response3disk_5,response5disk_5,response7disk_5,
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0
      syncScreenRefresh = True
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    ImageComponent response1disk_5
      image = response67.png
      pos = (a,a)
      size = (b,b)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent response3disk_5
      image = response45.png
      pos = (a,-a)
      size = (b,b)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent response5disk_5
      image = response23.png
      pos = (-a,-a)
      size = (b,b)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent response7disk_5
      image = response01.png
      pos = (-a,a)
      size = (b,b)
      startVal [time (s)] = 0.0
      units = pix
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    TextComponent text_29
      color = black
      letterHeight = 0.05
      pos = (0, -0.7)
      startVal [time (s)] = 0.0
      units = norm
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      text:
        Please choose the similarity level of the flower with the previously cued flower.
        Please click and hold to indicate your choice.
        0 => Most similar
        7 => Most different
    CodeComponent code_27
      Code Type = Auto->JS
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      Each Frame:
        if Flower_2 == 1:
            flower1.setPos([0, 0])
            flower1.setDepth(5)
            flower1.setSize((15*ratio_pxpermm, 15*ratio_pxpermm))
            flower1.setAutoDraw(true)
        elif Flower_2 == 2:
            flower2.setPos([0, 0])
            flower2.setDepth(5)
            flower2.setSize((15*ratio_pxpermm, 15*ratio_pxpermm))
            flower2.setAutoDraw(true)
        elif Flower_2 == 3:
            flower3.setPos([0, 0])
            flower3.setDepth(5)
            flower3.setSize((15*ratio_pxpermm, 15*ratio_pxpermm))
            flower3.setAutoDraw(true)
        elif Flower_2 == 4:
            flower4.setPos([0, 0])
            flower4.setDepth(5)
            flower4.setSize((15*ratio_pxpermm, 15*ratio_pxpermm))
            flower4.setAutoDraw(true)
        elif Flower_2 == 5:
            flower5.setPos(0, 0)
            flower5.setDepth(5)
            flower5.setSize((15*ratio_pxpermm, 15*ratio_pxpermm))
            flower5.setAutoDraw(true)
        elif Flower_2== 6:
            flower6.setPos([0, 0])
            flower6.setDepth(5)
            flower6.setSize((15*ratio_pxpermm, 15*ratio_pxpermm))
            flower6.setAutoDraw(true)
        elif Flower_2== 7:
            flower7.setPos([0, 0])
            flower7.setDepth(5)
            flower7.setSize((15*ratio_pxpermm, 15*ratio_pxpermm))
            flower7.setAutoDraw(true)
        elif Flower_2 == 8:
            flower8.setPos([0, 0])
            flower8.setDepth(5)
            flower8.setSize((15*ratio_pxpermm, 15*ratio_pxpermm))
            flower8.setAutoDraw(true)
        elif Flower_2 == 9:
            flower9.setPos([0, 0])
            flower9.setDepth(5)
            flower9.setSize((15*ratio_pxpermm, 15*ratio_pxpermm))
            flower9.setAutoDraw(true)
  Routine catch_prac
    MouseComponent mouse_7
      clickable = response1disk_7,response3disk_7,response5disk_7,response7disk_7
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
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    ImageComponent response1disk_7
      image = response67.png
      pos = a,a
      size = b,b
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent response3disk_7
      image = response45.png
      pos = a,-a
      size = b,b
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent response5disk_7
      image = response23.png
      pos = -a,-a
      size = b,b
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent response7disk_7
      image = response01.png
      pos = -a,a
      size = b,b
      startVal [time (s)] = 0.0
      units = pix
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    CodeComponent code_12
      Code Type = Auto->JS
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      Begin Experiment:
        # Set up catch trials

        catchtrialorderprac = []
        for i in range(0,2):
            n = randint(0,7)
            catchtrialorderprac.append(n)

        catchnumberprac = randint(0,7);
      Begin Routine:
        # Select random number for catch trial



        catchtext = f'SPECIAL TRIAL PLEASE JUST CLICK AND HOLD {catchnumberprac}'

        event.clearEvents()
      Each Frame:
        # Run catch trials
        if not ((pracnumber == catchtrialorderprac[0]) or (pracnumber == catchtrialorderprac[1])):
            continueRoutine=False
      End Routine:
        # Save similarity rating
        mousexpos=mouse.getPos()[0]  # get x position of mouse
        mouseypos=mouse.getPos()[1]  # get y position of mouse

        # Triangle 7
        x11d = a - b/2;
        y11d = a + b/2;
        x12d = a + b/2;
        y12d = a + b/2;
        x13d = a - b/2;
        y13d = a - b/2;
        a1d = ((y12d - y13d)*(mousexpos - x13d) + (x13d - x12d)*(mouseypos - y13d)) / ((y12d - y13d)*(x11d - x13d)+(x13d - x12d)*(y11d - y13d))
        b1d = ((y13d - y11d)*(mousexpos - x13d) + (x11d - x13d)*(mouseypos - y13d)) / ((y12d - y13d)*(x11d - x13d)+(x13d - x12d)*(y11d - y13d))
        c1d = 1 - a1d - b1d;

        # Triangle 6
        x21d = a - b/2;
        y21d = a - b/2
        x22d = a + b/2
        y22d = a + b/2
        x23d = a + b/2
        y23d = a - b/2
        a2d = ((y22d - y23d)*(mousexpos - x23d) + (x23d - x22d)*(mouseypos - y23d)) / ((y22d - y23d)*(x21d - x23d)+(x23d - x22d)*(y21d - y23d))
        b2d = ((y23d - y21d)*(mousexpos - x23d) + (x21d - x23d)*(mouseypos - y23d)) / ((y22d - y23d)*(x21d - x23d)+(x23d - x22d)*(y21d - y23d))
        c2d = 1 - a2d - b2d

        # Triangle 5
        x31d = a - b/2
        y31d = -(a - b/2)
        x32d = a + b/2
        y32d = -(a - b/2)
        x33d = a + b/2
        y33d = -(a + b/2)
        a3d = ((y32d - y33d)*(mousexpos - x33d) + (x33d - x32d)*(mouseypos - y33d)) / ((y32d - y33d)*(x31d - x33d)+(x33d - x32d)*(y31d - y33d))
        b3d = ((y33d - y31d)*(mousexpos - x33d) + (x31d - x33d)*(mouseypos - y33d)) / ((y32d - y33d)*(x31d - x33d)+(x33d - x32d)*(y31d - y33d))
        c3d = 1 - a3d - b3d


        # Triangle 4
        x41d = a - b/2
        y41d = -(a - b/2)
        x42d = a + b/2
        y42d = -(a + b/2)
        x43d = a - b/2
        y43d = -(a + b/2)
        a4d = ((y42d - y43d)*(mousexpos - x43d) + (x43d - x42d)*(mouseypos - y43d)) / ((y42d - y43d)*(x41d - x43d)+(x43d - x42d)*(y41d - y43d))
        b4d = ((y43d - y41d)*(mousexpos - x43d) + (x41d - x43d)*(mouseypos - y43d)) / ((y42d - y43d)*(x41d - x43d)+(x43d - x42d)*(y41d - y43d))
        c4d = 1 - a4d - b4d

        #  Triangle 3
        x51d = -(a + b/2)
        y51d = -(a + b/2)
        x52d = -(a - b/2)
        y52d = -(a - b/2)
        x53d = -(a - b/2)
        y53d = -(a + b/2)
        a5d = ((y52d - y53d)*(mousexpos - x53d) + (x53d - x52d)*(mouseypos - y53d)) / ((y52d - y53d)*(x51d - x53d)+(x53d - x52d)*(y51d - y53d))
        b5d = ((y53d - y51d)*(mousexpos - x53d) + (x51d - x53d)*(mouseypos - y53d)) / ((y52d - y53d)*(x51d - x53d)+(x53d - x52d)*(y51d - y53d))
        c5d = 1 - a5d - b5d

        # Triangle 2
        x61d = -(a+b/2)
        y61d = -(a+b/2)
        x62d = -(a-b/2)
        y62d = -(a-b/2)
        x63d = -(a+b/2)
        y63d = - (a+b/2)
        a6d = ((y62d - y63d)*(mousexpos - x63d) + (x63d - x62d)*(mouseypos - y63d)) / ((y62d - y63d)*(x61d - x63d)+(x63d - x62d)*(y61d - y63d))
        b6d = ((y63d - y61d)*(mousexpos - x63d) + (x61d - x63d)*(mouseypos - y63d)) / ((y62d - y63d)*(x61d - x63d)+(x63d - x62d)*(y61d - y63d))
        c6d = 1 - a6d - b6d

        # Triangle 1

        x71d = -(a + b/2)
        y71d = a + b/2
        x72d = -(a - b/2)
        y72d = a - b/2
        x73d = -(a + b/2)
        y73d = a - b/2
        a7d = ((y72d - y73d)*(mousexpos - x73d) + (x73d - x72d)*(mouseypos - y73d)) / ((y72d - y73d)*(x71d - x73d)+(x73d - x72d)*(y71d - y73d))
        b7d = ((y73d - y71d)*(mousexpos - x73d) + (x71d - x73d)*(mouseypos - y73d)) / ((y72d - y73d)*(x71d - x73d)+(x73d - x72d)*(y71d - y73d))
        c7d = 1 - a7d - b7d


        # Triangle 0
        x81d = -(a + b/2)
        y81d = a + b/2
        x82d = -(a - b/2)
        y82d = a + b/2
        x83d = -(a - b/2)
        y83d = a - b/2
        a8d = ((y82d - y83d)*(mousexpos - x83d) + (x83d - x82d)*(mouseypos - y83d)) / ((y82d - y83d)*(x81d - x83d)+(x83d - x82d)*(y81d - y83d))
        b8d = ((y83d - y81d)*(mousexpos - x83d) + (x81d - x83d)*(mouseypos - y83d)) / ((y82d - y83d)*(x81d - x83d)+(x83d - x82d)*(y81d - y83d))
        c8d = 1 - a8d - b8d

        if (0 <= a1d <= 1) and (0 <= b1d <= 1) and (0 <= c1d <= 1):
            catchprac = 7
            thisExp.addData("catchprac", catchprac);
        elif (0 <= a2d <= 1) and (0 <= b2d <= 1) and (0 <= c2d <= 1):
            catchprac = 6
            thisExp.addData("catchprac", catchprac);
        elif (0 <= a3d <= 1) and (0 <= b3d <= 1) and (0 <= c3d <= 1):
            catchprac = 5
            thisExp.addData("catchprac", catchprac);
        elif (0 <= a4d <= 1) and (0 <= b4d <= 1) and (0 <= c4d <= 1):
            catchprac = 4
            thisExp.addData("catchprac", catchprac);
        elif (0 <= a5d <= 1) and (0 <= b5d <= 1) and (0 <= c5d <= 1):
            catchprac = 3
            thisExp.addData("catchprac", catchprac);
        elif (0 <= a6d <= 1) and (0 <= b6d <= 1) and (0 <= c6d <= 1):
            catchprac = 2
            thisExp.addData("catchprac", catchprac);
        elif (0 <= a7d <= 1) and (0 <= b7d <= 1) and (0 <= c7d <= 1):
            catchprac = 1;
            thisExp.addData("catchprac", catchprac);
        elif (0 <= a8d <= 1) and (0 <= b8d <= 1) and (0 <= c8d <= 1):
            catchprac = 0;
            thisExp.addData("catchprac", catchprac);



        thisExp.addData("catchnumberprac", catchnumberprac);
    TextComponent text_32
      color = black
      letterHeight = 0.05
      pos = (0, -0.6)
      startVal [time (s)] = 0.0
      text [set every repeat] = $catchtext
      units = norm
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    PolygonComponent rectangle_5
      fillColor [set every repeat] = $grey
      nVertices = 1000
      shape = rectangle
      size = (0.1, 0.08)
      startVal [time (s)] = 0.0
      units = norm
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  Routine special_trial
    TextComponent text_33
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .250
      text = SPECIAL TRIAL
      units = norm
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    CodeComponent code_13
      Code Type = Auto->JS
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      Each Frame:
        # Run catch trials
        if not ((trialnumber == catchtrialorder[0]) or (trialnumber == catchtrialorder[1]) or (trialnumber == catchtrialorder[2]) or (trialnumber == catchtrialorder[3]) or (trialnumber == catchtrialorder[4]) or (trialnumber == catchtrialorder[5]) or (trialnumber == catchtrialorder[6]) or (trialnumber == catchtrialorder[7]) or (trialnumber == catchtrialorder[8]) or (trialnumber == catchtrialorder[9]) or (trialnumber == catchtrialorder[10]) or (trialnumber == catchtrialorder[11]) or (trialnumber == catchtrialorder[12]) or (trialnumber == catchtrialorder[13]) or (trialnumber == catchtrialorder[14]) or (trialnumber == catchtrialorder[15]) or (trialnumber == catchtrialorder[16]) or (trialnumber == catchtrialorder[17]) or (trialnumber == catchtrialorder[18]) or (trialnumber == catchtrialorder[19])):
            continueRoutine=False
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  Routine summary2_prac
    MouseComponent mouse_6
      clickable = rectangle_4
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
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    ImageComponent response1disk_6
      image = response67.png
      pos = a,a
      size = b,b
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent response3disk_6
      image = response45.png
      pos [set every repeat] = a,-a
      size [set every repeat] = b,b
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent response5disk_6
      image = response23.png
      pos = -a,-a
      size = b,b
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent response7disk_6
      image = response01.png
      pos [set every repeat] = -a,a
      size [set every repeat] = b,b
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent rectangle_4
      fillColor [set every repeat] = $grey
      nVertices = 1000
      shape = rectangle
      size = (0.1, 0.08)
      startVal [time (s)] = 0.0
      units = norm
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    CodeComponent code_11
      Code Type = Auto->JS
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      Begin Experiment:
        pracnumber = 0;
      Begin Routine:
        pracnumbertext = f'You have finished {pracnumber} of 7 practice questions';

        event.clearEvents()

        # Run catch trials
        if not ((pracnumber == catchtrialorderprac[0]) or (pracnumber == catchtrialorderprac[1])):
            continueRoutine=False
      Each Frame:
        # Run catch trials
        if not ((pracnumber == catchtrialorderprac[0]) or (pracnumber == catchtrialorderprac[1])):
            continueRoutine=False
    TextComponent text_30
      color = black
      letterHeight = 0.05
      pos = (0, -0.7)
      startVal [time (s)] = 0.0
      text = Please click and hold the grey rectangle in the middle of the response numbers to continue
      units = norm
      wrapWidth = 1000
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    TextComponent text_31
      color = black
      letterHeight = 0.05
      pos = (0, -0.8)
      startVal [time (s)] = 0.0
      text [set every repeat] = $pracnumbertext
      units = norm
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  Routine special_trial_prac
    TextComponent text_36
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .250
      text = SPECIAL TRIAL
      units = norm
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    CodeComponent code_15
      Code Type = Auto->JS
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      Each Frame:
        # Run catch trials
        if not ((pracnumber == catchtrialorderprac[0]) or (pracnumber == catchtrialorderprac[1])):
            continueRoutine=False
  Routine screen_scale
    ImageComponent ccimage
      image = card.png
      pos = (-150,150)
      size [set every repeat] = $(x_size*x_scale, x_size*x_scale*0.62)
      startVal [time (s)] = 0.0
      units = pix
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    CodeComponent code_JS
      Code Type = Auto->JS
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    CodeComponent code_16
      Code Type = Auto->JS
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      Begin Experiment:
        # Set size of card

        oldt=0
        x_size=8.560
        y_size=5.398


        if ccimage.units=='norm':
            x_scale=.05
            y_scale=.1
            dbase = .0001
            unittext=' norm units'
            vsize=2
        elif ccimage.units=='pix':
            x_scale=60
            y_scale=40
            dbase = .1
            unittext=' pixels'
            vsize=win.size[1]
        else:
            x_scale=.05
            y_scale=.05
            dbase = .0001
            unittext=' height units'
            vsize=1
      Each Frame:
        keys=event.getKeys()

        if len(keys):
            if t-oldt<.5:
                dscale=5*dbase
                oldt=t
            else:
                dscale=dbase
                oldt=t
            if 'return' in keys:
                continueRoutine=False
            elif 'j' in keys:
                x_scale=round((x_scale-dscale)*10000)/10000
            elif 'k' in keys:
                x_scale=round((x_scale+dscale)*10000)/10000
            ccimage.size=[x_size*x_scale, x_size*x_scale*0.62]


        ratio_pxpermm = ((x_scale*x_size)/85.6)
      End Routine:
        #Calculate ratio of pixels to mm
        ratio_pxpermm = ((x_scale*x_size)/85.6)

        thisExp.addData('X Scale',x_scale)
        thisExp.addData('ratio_pxpermm',ratio_pxpermm)

        screen_size_x = (1 / ratio_pxpermm) * (win.size[0]);
        screen_size_y = (1 / ratio_pxpermm) * (win.size[1]);

        thisExp.addData('screen_size_x',screen_size_x)
        thisExp.addData('screen_size_y',screen_size_y)
    TextComponent text_37
      color = yellow
      letterHeight = 0.06
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1000
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      text:
        First, we need to determine the size of your screen.
        Take a credit card (or a drivers license, library card, any equivalent card),
        press it to the screen and adjust the image on your screen to be the same size as the card

        To increase the image width: press 'k' on your keyboard
        To decrease the image width: press 'j' on your keyboard

        When you are done, press <ENTER>
  Routine ball_calibration
    PolygonComponent black_square2
      fillColor = black
      lineColor = black
      lineWidth = 1.5
      pos [set every frame] = (((window.innerWidth/2)*0.8),0)
      shape = regular polygon...
      size [set every repeat] = (8.5*ratio_pxpermm, 8.5*ratio_pxpermm)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent white_ball
      fillColor = white
      nVertices = 1000
      pos [set every frame] = [((-frameN*((window.innerWidth/2)*0.003))+ballpos), 0]
      shape = regular polygon...
      size [set every repeat] = (8.5*ratio_pxpermm, 8.5*ratio_pxpermm)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 800
      units = pix
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    KeyboardComponent key_resp_19
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_18
      Code Type = Auto->JS
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      Begin Experiment:
        # Store each calibration
        viewerdistancetotal = []
        # Count calibrations
        calibrationcount = 0
      Begin Routine:
        # Blindspot angle
        blindspot_angle = 13.5
        ballpos = (window.innerWidth/2)*0.75;
        # Convert radians to degrees
        radians_to_degrees = 57.2958
        calibrationcountext=f'{calibrationcount} of 5 angle calibrations complete'
      End Routine:
        # Final x position of white ball
        currentframe = frameN
        if currentframe < 800:
            ballposx = white_ball.pos[0]

        if currentframe >= 800:
            ballposx = white_ball1_2.pos[0]

        # X position of black square
        squarepos = black_square2.pos[0]
        # Calulcate the distance from the screen for this calibration
        viewer_distance =  (((squarepos - ballposx))/ratio_pxpermm)/tan(blindspot_angle/radians_to_degrees)
        # Store the distance in a list
        viewerdistancetotal.append(viewer_distance);
        # Calibration count
        calibrationcount = calibrationcount + 1;

        thisExp.addData("ballposx", ballposx)
        thisExp.addData("viewer_distance", viewer_distance)
    TextComponent text_39
      letterHeight = 0.06
      pos = (0, -0.6)
      startVal [time (s)] = 0.0
      text [set every repeat] = $calibrationcountext
      units = norm
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    PolygonComponent white_ball1_2
      fillColor = white
      nVertices = 1000
      pos [set every frame] = [(((-frameN+800)*((window.innerWidth/2)*0.003))+ballpos), 0]
      shape = regular polygon...
      size [set every repeat] = (8.5*ratio_pxpermm, 8.5*ratio_pxpermm)
      startVal [frame N] = 800
      units = pix
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  Routine colour_circle_instr_2
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        # Randomly place instruction circles
        circle_position = [[(- 230), 230], [0, 230], [230, 230], [(- 230), 0], [0, 0], [230, 0], [230, (- 230)], [0, (- 230)], [(-230), (- 230)]];
        shuffle(circle_position)
    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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    TextComponent space_9
      color = yellow
      letterHeight = 0.05
      pos = (0.7, -0.7)
      startVal [time (s)] = 2
      text = Press SPACE to continue 
      units = norm
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    TextComponent text_9
      color = yellow
      letterHeight = 0.06
      pos = (0, 0.8)
      startVal [time (s)] = 0.0
      text = During the test, you will see these 9 flowers below
      units = norm
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    ImageComponent flower1
      image = flower1.png
      pos [set every repeat] = $circle_position[0]
      size = (100, 100)
      startVal [time (s)] = 0.0
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    ImageComponent flower2
      image = flower2.png
      pos [set every repeat] = $circle_position[1]
      size = (100, 100)
      startVal [time (s)] = 0.0
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    ImageComponent flower3
      image = flower3.png
      pos [set every repeat] = $circle_position[2]
      size = (100, 100)
      startVal [time (s)] = 0.0
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    ImageComponent flower4
      image = flower4.png
      pos [set every repeat] = $circle_position[3]
      size = (100, 100)
      startVal [time (s)] = 0.0
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    ImageComponent flower5
      image = flower5.png
      pos [set every repeat] = $circle_position[4]
      size = (100, 100)
      startVal [time (s)] = 0.0
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    ImageComponent flower6
      image = flower6.png
      pos [set every repeat] = $circle_position[5]
      size = (100, 100)
      startVal [time (s)] = 0.0
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    ImageComponent flower7
      image = flower7.png
      pos [set every repeat] = $circle_position[6]
      size = (100, 100)
      startVal [time (s)] = 0.0
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    ImageComponent flower8
      image = flower8.png
      pos [set every repeat] = $circle_position[7]
      size = (100, 100)
      startVal [time (s)] = 0.0
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    ImageComponent flower9
      image = flower9.png
      pos [set every repeat] = $circle_position[8]
      size = (100, 100)
      startVal [time (s)] = 0.0
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  Routine instr_2
    MovieComponent movie
      backend = moviepy
      forceEndRoutine = True
      loop = True
      movie [set every repeat] = calibrationinsrt.mp4
      pos = (0, 0.4)
      size [set every repeat] = (0.38,0.35)
      startVal [time (s)] = 0
      units = norm
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    TextComponent text
      color = yellow
      letterHeight = 0.06
      pos = (0,-0.2)
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1000
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      text:
        Next, we need to get you to keep your head a fixed distance from the screen.
        This will ensure future images are the right size for your screen. On the next screen please:
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_3
      color = yellow
      letterHeight = 0.06
      pos = (0, -0.5)
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1000
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      text:
        1. Keeping your arm straight, please touch your thumb to the centre of the screen in the oval
        2. While keeping your head in the same position, lower your arm.
        3. Please keep your head in this position for the remainder of the experiment
    TextComponent space_3
      color = yellow
      letterHeight = 0.05
      pos = (0.7, -0.7)
      startVal [time (s)] = 0.0
      text = Press SPACE to continue 
      units = norm
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  Routine instr_3
    TextComponent text_4
      color = yellow
      letterHeight = 0.07
      pos = (0, 0.5)
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1000
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      text:
        1. While keeping your arm straight touch your thumb to the centre of the screen in the oval.
        2. Keep your head in the same position, but lower and relax your arm.
        3. Please keep your head in this position for the remainder of the experiment.
        4. Press SPACE to continue
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_21
      Code Type = Auto->JS
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      Begin Experiment:
        thumb_size = 20;
      Begin Routine:
        # Calculate line size from ratio
        line_size = thumb_size * ratio_pxpermm
      End Routine:
        thisExp.addData("line_size", line_size);
    ImageComponent calibrationline
      image = calibrationline.png
      size [set every repeat] = $(line_size, line_size*3)
      startVal [time (s)] = 0.0
      units = pix
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  Routine instr_4
    TextComponent text_5
      color = yellow
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.5
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      text:
        Lastly, we need to know how far your head is from the screen.
        Please keep your head in the same position as before.

        Over the next few pages we will explain how we can work out how far you are sitting from the screen.
        Please pay attention and follow all the instructions carefully.

        These first few pages will be INSTRUCTIONS ONLY. You will be instructed when the calibrations start.

        When ready, press SPACE to continue and follow the instructions on the next page.
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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    TextComponent space_4
      color = yellow
      letterHeight = 0.05
      pos = (0.7, -0.7)
      startVal [time (s)] = 2
      text = Press SPACE to continue 
      units = norm
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  Routine instr_5
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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    TextComponent space_5
      color = yellow
      letterHeight = 0.05
      pos = (0.7, -0.7)
      startVal [time (s)] = 2
      text = Press SPACE to continue 
      units = norm
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    TextComponent instr_only
      color = yellow
      letterHeight = 0.1
      pos = (0, 0.6)
      startVal [time (s)] = 0.0
      text = INSTRUCTIONS ONLY
      units = norm
      wrapWidth = 10000
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    TextComponent text_6
      color = yellow
      letterHeight = 0.06
      pos = (0, -0.5)
      startVal [time (s)] = 0.0
      text = 1. Put a finger on <ENTER> on the keyboard.
      units = norm
      wrapWidth = 1000
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  Routine instr_6
    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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    TextComponent space_7
      color = yellow
      letterHeight = 0.05
      pos = (0.7,-0.7)
      startVal [time (s)] = 2
      text = Press SPACE to continue 
      units = norm
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    TextComponent instr_only_3
      color = yellow
      letterHeight = 0.1
      pos = (0, 0.6)
      startVal [time (s)] = 0.0
      text = INSTRUCTIONS ONLY
      units = norm
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    TextComponent text_8
      color = yellow
      letterHeight = 0.06
      pos = (0, -0.5)
      startVal [time (s)] = 0.0
      text = 2. Close your right eye
      units = norm
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  Routine viewerdistance
    CodeComponent code_19
      Code Type = Auto->JS
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      Begin Experiment:
        peripheral_scale = 4.5 #scaling factor for peripheral stimuli, chosen based on Freeman & Simoncelli 2011 fig 1.
        radius_central = 1.5 # arbitrarily chosen 1 DVA
        radius_peripheral = 10
        stimulus_size = 1 # arbitarily chosen 1 DVA
        response_stim_scale = 2
        distance_threshold = 300
        screen_x_threshold = 230
      Begin Routine:
        viewerdistancecm = round((sum(viewerdistancetotal)/50),3)
        viewdistancetext=f'Your viewing distance is {viewerdistancecm} cm'


        DVA_to_distance = (viewerdistancecm *tan(1/radians_to_degrees))*10;
        radius_F = DVA_to_distance * ratio_pxpermm * radius_central;
        radius_P =  DVA_to_distance * ratio_pxpermm * radius_peripheral;
        r_F =  DVA_to_distance * ratio_pxpermm * stimulus_size;
        R_P =  peripheral_scale * r_F;
      Each Frame:
        if viewerdistancecm*10 < distance_threshold:
            continueRoutine = False

        if screen_size_x < screen_x_threshold:
                continueRoutine = False
      End Routine:
        thisExp.addData("viewerdistancecm", viewerdistancecm)
        thisExp.addData("DVA_to_distance", DVA_to_distance)
        thisExp.addData("radius_F", radius_F)
        thisExp.addData("radius_P", radius_P)
        thisExp.addData("r_F", r_F)
        thisExp.addData("R_P", R_P)
    TextComponent text_38
      color = yellow
      letterHeight = 0.08
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $viewdistancetext
      units = norm
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    TextComponent text_40
      color = yellow
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      text = The calibrations were successful!
      units = norm
      wrapWidth = 10000
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    KeyboardComponent key_resp_20
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent space_20
      color = yellow
      letterHeight = 0.05
      pos = (0.7, -0.7)
      startVal [time (s)] = 2
      text = Press SPACE to continue 
      units = norm
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  Routine viewerdistance_unsucess
    CodeComponent code_20
      Code Type = Auto->JS
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      Begin Routine:
        viewerdistancecm = round((sum(viewerdistancetotal)/50),3)
        viewdistancetext=f'Your viewing distance is calculated as {viewerdistancecm} cm'
      Each Frame:
        if viewerdistancecm*10 > distance_threshold and screen_size_x > screen_x_threshold:
            continueRoutine = False
    TextComponent text_41
      letterHeight = 0.08
      pos = (0, 0.100)
      startVal [time (s)] = 0.0
      text = Unfortunately the calibrations were unsuccessful.
      units = norm
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    TextComponent text_42
      color = red
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      text [set every repeat] = $viewdistancetext
      units = norm
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    TextComponent text_43
      color = red
      letterHeight = 0.08
      pos = (0, -0.100)
      startVal [time (s)] = 0.0
      text = Please exit the experiment
      units = norm
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  Routine instr_8
    KeyboardComponent key_resp_12
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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    TextComponent space_11
      color = yellow
      letterHeight = 0.05
      pos = (0.7, -0.7)
      startVal [time (s)] = 2
      text = Press SPACE to continue 
      units = norm
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    TextComponent instr_only_5
      color = yellow
      letterHeight = 0.1
      pos = (0, 0.6)
      startVal [time (s)] = 0.0
      text = INSTRUCTIONS ONLY
      units = norm
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    TextComponent text_13
      color = yellow
      letterHeight = 0.06
      pos = (0, -0.5)
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1000
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      text:
        4. Without moving your head or face, use your left eye to focus on the black square.
        Keep your right eye closed and do not move your head.
    PolygonComponent center_cross_3
      fillColor = $[1,1,1]
      lineWidth = 0.8
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      units = norm
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    PolygonComponent black_square
      fillColor = black
      lineColor = black
      lineWidth = 1.5
      pos = (500,0)
      shape = regular polygon...
      size [set every repeat] = (8.5*ratio_pxpermm, 8.5*ratio_pxpermm)
      startVal [time (s)] = 0.0
      units = pix
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    TextComponent text_14
      color = black
      letterHeight = 0.03
      pos = (0.75, 0.08)
      startVal [time (s)] = 0.0
      text = Stare at the square
      units = norm
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  Routine instr_prac
    TextComponent space_10
      color = yellow
      letterHeight = 0.05
      pos = (0.7, -0.7)
      startVal [time (s)] = 2
      text = Press SPACE to continue 
      units = norm
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    TextComponent text_10
      color = yellow
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1000
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      text:
        You are going to do a few practice trials to make you be more familiar with the experiment.
        When you are ready, please press SPACE to start the practice trials
    KeyboardComponent key_resp_10
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instr_10
    KeyboardComponent key_resp_18
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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    TextComponent space_17
      color = yellow
      letterHeight = 0.05
      pos = (0.7, -0.7)
      startVal [time (s)] = 2
      text = Press SPACE to continue 
      units = norm
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    TextComponent instr_only_7
      color = yellow
      letterHeight = 0.1
      pos = (0, 0.6)
      startVal [time (s)] = 0.0
      text = INSTRUCTIONS ONLY
      units = norm
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    TextComponent text_44
      color = yellow
      letterHeight = 0.06
      pos = (0, -0.5)
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.5
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      text:
        6. Press the <ENTER> key as soon as the ball disappears properly from your eye sight (not due to running off screen)
        Keep your right eye closed, stare at the black square, do not move your head.
  Routine instr_12
    KeyboardComponent key_resp_13
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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    TextComponent space_12
      color = yellow
      letterHeight = 0.05
      pos = (0.7, -0.7)
      startVal [time (s)] = 2
      text = Press SPACE to continue 
      units = norm
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    TextComponent instr_only_6
      color = yellow
      letterHeight = 0.07
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.5
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      text:
        NEXT WILL BE THE ACTUAL CALIBRATION

        Remember to keep your right eye closed, stare at the black square and do not move your head.

        Press the <ENTER> key as soon as the ball disappears from your eye sight (not just due to running off the edge of the screen).

        When ready press SPACE to start viewing the distance calibration.
    TextComponent text_15
      letterHeight = 0.06
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Warning! It is critical that these calibrations are done correctly or you will be unable to do the experiment and we will be unable to approve your payment!
      units = norm
      wrapWidth = 1.5
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  Routine instr_11
    KeyboardComponent key_resp_21
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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    TextComponent space_18
      color = yellow
      letterHeight = 0.05
      pos = (0.7, -0.7)
      startVal [time (s)] = 2
      text = Press SPACE to continue 
      units = norm
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    TextComponent instr_only_8
      color = yellow
      letterHeight = 0.1
      pos = (0,0.6)
      startVal [time (s)] = 0.0
      text = INSTRUCTIONS ONLY
      units = norm
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    TextComponent text_45
      color = yellow
      letterHeight = 0.06
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1000
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      text:
        7. The next page will show you a demonstration of the calibration task for a few seconds.
        During the actual calibration, you will need to press <ENTER> when the ball disappears.

        You will do this five times so we can make sure we get the right distance.
        The ball will reset each time.

        Keep your right eye closed, stare at the black square and do not move your head.
  Routine begin
    TextComponent space_19
      color = yellow
      letterHeight = 0.05
      pos = (0.7, -0.7)
      startVal [time (s)] = 2
      text = Press SPACE to continue 
      units = norm
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    TextComponent text_46
      color = yellow
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1000
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      text:
        You have finished the practice trial.

        Next page will be the formal test.

        If you are ready, please press SPACE button to start the experiment.
    KeyboardComponent key_resp_22
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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
  Routine summary_prac
    MouseComponent mouse_10
      clickable = rectangle_8
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
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    ImageComponent response1disk_10
      image = response67.png
      pos = a,a
      size = b,b
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent response3disk_10
      image = response45.png
      pos = a,-a
      size = b,b
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent response5disk_10
      image = response23.png
      pos = -a,-a
      size = b,b
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent response7disk_10
      image = response01.png
      pos = -a,a
      size = b,b
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent rectangle_8
      fillColor [set every repeat] = $grey
      nVertices = 1000
      shape = rectangle
      size = (0.1, 0.08)
      startVal [time (s)] = 0.0
      units = norm
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    CodeComponent code_23
      Code Type = Auto->JS
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      Begin Experiment:
        pracnumber = 0;
      Begin Routine:
        pracnumbertext = f'You have finished {pracnumber} of 7 practice questions';

        event.clearEvents()
    TextComponent text_49
      color = black
      letterHeight = 0.05
      pos = (0, -0.5)
      startVal [time (s)] = 0.0
      text = Please click and hold on the grey rectangle in the middle of the response numbers to continue
      units = norm
      wrapWidth = 1000
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    TextComponent text_50
      color = black
      letterHeight = 0.05
      pos = (0, -0.7)
      startVal [time (s)] = 0.0
      text [set every repeat] = $pracnumbertext
      units = norm
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  Routine response_sum
    MouseComponent mouse_11
      clickable = rectangle
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    ImageComponent response1disk_11
      image = response67.png
      pos = a,a
      size = b,b
      startVal [time (s)] = 0.0
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    ImageComponent response3disk_11
      image = response45.png
      pos = a,-a
      size = b,b
      startVal [time (s)] = 0.0
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    ImageComponent response5disk_11
      image = response23.png
      pos = -a,-a
      size = b,b
      startVal [time (s)] = 0.0
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    ImageComponent response7disk_11
      image = response01.png
      pos = -a,a
      size = b,b
      startVal [time (s)] = 0.0
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    PolygonComponent rectangle_9
      fillColor [set every repeat] = $grey
      nVertices = 1000
      shape = rectangle
      size = (0.100, 0.080)
      startVal [time (s)] = 0.0
      units = norm
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    CodeComponent code_24
      Code Type = Auto->JS
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      Begin Experiment:
        trialnumber = 0;
      Begin Routine:
        trialnumbertext = f'You have finished {trialnumber} of 324 questions';

        event.clearEvents()

        # Run catch trials
        if not ((trialnumber == catchtrialorder[0]) or (trialnumber == catchtrialorder[1]) or (trialnumber == catchtrialorder[2]) or (trialnumber == catchtrialorder[3]) or (trialnumber == catchtrialorder[4]) or (trialnumber == catchtrialorder[5]) or (trialnumber == catchtrialorder[6]) or (trialnumber == catchtrialorder[7]) or (trialnumber == catchtrialorder[8]) or (trialnumber == catchtrialorder[9]) or (trialnumber == catchtrialorder[10]) or (trialnumber == catchtrialorder[11]) or (trialnumber == catchtrialorder[12]) or (trialnumber == catchtrialorder[13]) or (trialnumber == catchtrialorder[14]) or (trialnumber == catchtrialorder[15]) or (trialnumber == catchtrialorder[16]) or (trialnumber == catchtrialorder[17]) or (trialnumber == catchtrialorder[18]) or (trialnumber == catchtrialorder[19])):
            continueRoutine=False
      Each Frame:
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    TextComponent text_51
      color = black
      letterHeight = 0.05
      pos = (0, -0.5)
      startVal [time (s)] = 0.0
      text = Please click and hold the grey rectangle in the middle of the response numbers to continue
      units = norm
      wrapWidth = 1000
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    TextComponent text_52
      color = black
      letterHeight = 0.05
      pos = (0, -0.7)
      startVal [time (s)] = 0.0
      text [set every repeat] = $trialnumbertext
      units = norm
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  Routine consent
    CodeComponent code_17
      Code Type = Auto->JS
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      Begin Routine:
        posx = ((window.innerWidth / 2) * 0.85);
        posy = ((window.innerWidth / 2) * 0.85);
    TextComponent text_53
      font = Times New Roman
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.5
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      text:
        Precision Phenomenology Experiment
        Just a little bit more to read before the experiment...this is an Informed Consent Form. Please read and understand the statements below.

        I understand that my taking part in the study is voluntary and that I am free to leave the study at any time, without giving any reason. I understand that my medical care or legal rights will not be affected in any way.
        I agree to the use and release of study-related information about me for the purposes described in this Informed Consent Form.
        I agree to the re-use of data collected in this study for future studies in a de-identified manner as described in this Informed Consent form.
        I understand that my consent continues until and unless I withdraw my consent that can be done at any time by giving notice to the investigator. I understand that if I withdraw my consent I will not be able to continue to take part in the study.
        I understand that if I withdraw consent, the study researchers will no longer use or release information that identifies me in connection with the study unless it is needed to keep the scientific quality of the study. I understand that if I withdraw consent the study researchers may still use any study-related information about me that was collected before I withdrew consent.
        I have read and I understand the information provided in this Informed Consent Form. I have had the opportunity to ask questions and have had these questions answered satisfactorily.
        I have had time to consider the information provided in this Informed Consent Form to consider answers to my questions, and to consider whether I wish to take part in the study.
        If you understand the statements above, and freely consent to participate in the study, press [Space] to begin the experiment.
    KeyboardComponent key_resp_16
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image
      disabled = True
      image = monash-logo-mono.png
      pos [set every repeat] = (-posx, posy)
      size = 150,75
      startVal [time (s)] = 0.0
      units = pix
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  Routine survey1
    TextComponent copyText_1
      letterHeight = 0.08
      pos = (-0.05, 0.1)
      startVal [time (s)] = 0
      units = norm
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    CodeComponent code_answer_4
      Code Type = Both
      Begin Experiment:
        import string
        allLetters = list(string.ascii_lowercase+string.digits)
      Begin JS Routine:
        modify = false;
        copyText_1.text = '';
      Begin Routine:
        textFill_5 = ''
      Each Frame:
        keys = event.getKeys()
        if 'escape' in keys:
            core.quit()  # So you can quit
        else:
            if keys:
                if keys[0] == 'space':
                    textFill_1 += ' '  # Adds a space instead of 'space'
                if keys[0] == 'backspace':
                    textFill_1 = textFill_1[:-1]  # Deletes
                elif keys[0] == 'period':
                    textFill_1 += '.'
                elif keys[0] in allLetters:
                    textFill_1+=keys[0]  # Adds character to text if in alphabet.
                copyText_1.setText(textFill_1)  # Set new text on screen
      Each JS Frame:
        let theseKeys = psychoJS.eventManager.getKeys({keyList: ['a', 'b', 'c', 'd','e','f','g','h','i','j','k','l','m','n','o','p','q','r','s','t','u','v','w','x','y','z','1','2','3','4','5','6','7','8','9','0','return','backspace','space']});
        if (theseKeys.length > 0) {  // at least one key was pressed
          textAdd = theseKeys[theseKeys.length-1];
          }




        if (textAdd === 'return') {
            textAdd = '';  // Add nothing
            continueRoutine = false;  // End routine (if that is what you want)
        } else if (textAdd === 'space') {
            textAdd = ' ';  // Add a space
        } else if (textAdd === 'backspace') {
            copyText_1.text = copyText_1.text.slice(0, -1);
            textAdd = undefined;
        } else if (textAdd !== undefined) {
            if (modify) {
                copyText_1.text = copyText_1.text + textAdd.toUpperCase();
                modify = false;
            } else {
                copyText_1.text = copyText_1.text + textAdd
            }
            textAdd = undefined;
        }
      End JS Routine:
        psychoJS.experiment.addData("answer1", copyText_1.text)
        copyText_1.setText('')  // empty the onscreen text ready for next input

        thisExp.addData("rt1", t);
      End Routine:
        thisExp.addData('answer1', textFill_1)
        thisExp.nextEntry()
    TextComponent question_4
      letterHeight = 0.08
      pos = (0, 0.5)
      startVal [time (s)] = 0
      units = norm
      wrapWidth = 1.5
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      text:
        Please answer the next 8 questions to finish the experiment. Please type your response and press <ENTER> to submit,

        1. Did you have any difficulty in seeing the location of the two flowers on each trial? (y or n)
    TextComponent submitanswer
      letterHeight = 0.08
      pos = (0, -0.9)
      startVal [time (s)] = 0.0
      text = Press enter to submit your answer
      units = norm
      wrapWidth = 3
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  Routine survey2
    TextComponent copyText_2
      letterHeight = 0.08
      pos = (-0.05, 0.1)
      startVal [time (s)] = 0
      units = norm
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    CodeComponent code_answer
      Code Type = Auto->JS
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      Begin Experiment:
        import string
        allLetters = list(string.ascii_lowercase+string.digits)
      Begin Routine:
        textFill_2 = ''
      Each Frame:
        keys = event.getKeys()
        if 'escape' in keys:
            core.quit()  # So you can quit
        else:
            if keys:
                if keys[0] == 'space':
                    textFill_2 += ' '  # Adds a space instead of 'space'
                if keys[0] == 'backspace':
                    textFill_2 = textFill_2[:-1]  # Deletes
                elif keys[0] == 'period':
                    textFill_2 += '.'
                elif keys[0] in allLetters:
                    textFill_2+=keys[0]  # Adds character to text if in alphabet.
                copyText_2.setText(textFill_2)  # Set new text on screen
      End Routine:
        thisExp.addData('answer2', textFill_2)
        thisExp.nextEntry()
    TextComponent question
      letterHeight = 0.08
      pos = (0, 0.5)
      startVal [time (s)] = 0
      text = 2. Do you have normal visual acuity, or corrected-to-normal wearing glasses or contact lenses? (y or n)
      units = norm
      wrapWidth = 1.5
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    TextComponent submitanswer_2
      letterHeight = 0.08
      pos = (0, -0.9)
      startVal [time (s)] = 0.0
      text = Press enter to submit your answer
      units = norm
      wrapWidth = 3
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  Routine survey3
    TextComponent copyText_3
      letterHeight = 0.08
      pos = (-0.05, 0.1)
      startVal [time (s)] = 0
      units = norm
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    CodeComponent code_answer_2
      Code Type = Both
      Begin Experiment:
        import string
        allLetters = list(string.ascii_lowercase+string.digits)
      Begin JS Routine:
        modify = false;
        copyText_3.text = '';
      Begin Routine:
        textFill_3 = ''
      Each Frame:
        keys = event.getKeys()
        if 'escape' in keys:
            core.quit()  # So you can quit
        else:
            if keys:
                if keys[0] == 'space':
                    textFill_3 += ' '  # Adds a space instead of 'space'
                if keys[0] == 'backspace':
                    textFill_3 = textFill_3[:-1]  # Deletes
                elif keys[0] == 'period':
                    textFill_3 += '.'
                elif keys[0] in allLetters:
                    textFill_3+=keys[0]  # Adds character to text if in alphabet.
                copyText_3.setText(textFill_3)  # Set new text on screen
      Each JS Frame:
        let theseKeys = psychoJS.eventManager.getKeys({keyList: ['a', 'b', 'c', 'd','e','f','g','h','i','j','k','l','m','n','o','p','q','r','s','t','u','v','w','x','y','z','1','2','3','4','5','6','7','8','9','0','return','backspace','space']});
        if (theseKeys.length > 0) {  // at least one key was pressed
          textAdd = theseKeys[theseKeys.length-1];
          }


        if (textAdd === 'return') {
            textAdd = '';  // Add nothing
            continueRoutine = false;  // End routine (if that is what you want)
        } else if (textAdd === 'space') {
            textAdd = ' ';  // Add a space
        } else if (textAdd === 'backspace') {
            copyText_3.text = copyText_3.text.slice(0, -1);
            textAdd = undefined;
        } else if (['lshift', 'rshift'].includes(textAdd)) {
            modify = true;
        } else if (textAdd !== undefined) {
            if (modify) {
                copyText_3.text = copyText_3.text + textAdd.toUpperCase();
                modify = false;
            } else {
                copyText_3.text = copyText_3.text + textAdd
            }
            textAdd = undefined;
        }
      End JS Routine:
        psychoJS.experiment.addData("answer3", copyText_3.text)
        copyText_3.setText('')  // empty the onscreen text ready for next input
        thisExp.addData("rt3", t);
      End Routine:
        thisExp.addData('answer3', textFill_3)
        thisExp.nextEntry()
    TextComponent question_2
      letterHeight = 0.08
      pos = (0, 0.5)
      startVal [time (s)] = 0
      text = 3. Do you have any colour vision impairment? (y or n). If yes, please describe the type (e.g) 'red-green colour blind').
      units = norm
      wrapWidth = 1.5
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    TextComponent submitanswer_3
      letterHeight = 0.08
      pos = (0, -0.9)
      startVal [time (s)] = 0.0
      text = Press enter to submit your answer
      units = norm
      wrapWidth = 3
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  Routine survey_4
    TextComponent copyText_4
      letterHeight = 0.08
      pos = (-0.05, 0.1)
      startVal [time (s)] = 0
      units = norm
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    CodeComponent code_answer_3
      Code Type = Both
      Begin Experiment:
        import string
        allLetters = list(string.ascii_lowercase+string.digits)
      Begin JS Routine:
        modify = false;
        copyText_4.text = '';
      Begin Routine:
        textFill_4 = ''
      Each Frame:
        keys = event.getKeys()
        if 'escape' in keys:
            core.quit()  # So you can quit
        else:
            if keys:
                if keys[0] == 'space':
                    textFill_4 += ' '  # Adds a space instead of 'space'
                if keys[0] == 'backspace':
                    textFill_4 = textFill_4[:-1]  # Deletes
                elif keys[0] == 'period':
                    textFill_4 += '.'
                elif keys[0] in allLetters:
                    textFill_4+=keys[0]  # Adds character to text if in alphabet.
                copyText_4.setText(textFill_4)  # Set new text on screen
      Each JS Frame:
        let theseKeys = psychoJS.eventManager.getKeys({keyList: ['a', 'b', 'c', 'd','e','f','g','h','i','j','k','l','m','n','o','p','q','r','s','t','u','v','w','x','y','z','1','2','3','4','5','6','7','8','9','0','return','backspace','space']});
        if (theseKeys.length > 0) {  // at least one key was pressed
          textAdd = theseKeys[theseKeys.length-1];
          }


        if (textAdd === 'return') {
            textAdd = '';  // Add nothing
            continueRoutine = false;  // End routine (if that is what you want)
        } else if (textAdd === 'space') {
            textAdd = ' ';  // Add a space
        } else if (textAdd === 'backspace') {
            copyText_4.text = copyText_4.text.slice(0, -1);
            textAdd = undefined;
        } else if (['lshift', 'rshift'].includes(textAdd)) {
            modify = true;
        } else if (textAdd !== undefined) {
            if (modify) {
                copyText_4.text = copyText_4.text + textAdd.toUpperCase();
                modify = false;
            } else {
                copyText_4.text = copyText_4.text + textAdd
            }
            textAdd = undefined;
        }
      End JS Routine:
        psychoJS.experiment.addData("answer4", copyText_4.text)
        copyText_4.setText('')  // empty the onscreen text ready for next input
        thisExp.addData("rt4", t);
      End Routine:
        thisExp.addData('answer4', textFill_4)
        thisExp.nextEntry()
    TextComponent question_3
      letterHeight = 0.08
      pos = (0, 0.5)
      startVal [time (s)] = 0
      text = 4. Please describe the strategy you used to base your judgment on.
      units = norm
      wrapWidth = 1.5
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    TextComponent submitanswer_4
      letterHeight = 0.08
      pos = (0, -0.9)
      startVal [time (s)] = 0.0
      text = Press enter to submit your answer
      units = norm
      wrapWidth = 3
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  Routine survey5
    TextComponent copyText_5
      letterHeight = 0.08
      pos = (-0.05, 0.1)
      startVal [time (s)] = 0
      units = norm
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    CodeComponent code_answer_5
      Code Type = Auto->JS
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      Begin Experiment:
        import string
        allLetters = list(string.ascii_lowercase+string.digits)
      Begin Routine:
        textFill_5 = ''
      Each Frame:
        keys = event.getKeys()
        if 'escape' in keys:
            core.quit()  # So you can quit
        else:
            if keys:
                #if keys[0] == 'space':
                    #textFill_5 += ' '  # Adds a space instead of 'space'
                if keys[0] == 'backspace':
                    textFill_5 = textFill_5[:-1]  # Deletes
                elif keys[0] == 'period':
                    textFill_5 += '.'
                elif keys[0] in allLetters:
                    textFill_5+=keys[0]  # Adds character to text if in alphabet.
                copyText_5.setText(textFill_5)  # Set new text on screen
      End Routine:
        thisExp.addData('answer5', textFill_5)
        thisExp.nextEntry()
    TextComponent question_5
      letterHeight = 0.08
      pos = (0, 0.5)
      startVal [time (s)] = 0
      text = 5. What is your experience in floral design? Please rate from 1-5. low=1 high =5
      units = norm
      wrapWidth = 1.5
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    TextComponent submitanswer_5
      letterHeight = 0.08
      pos = (0, -0.9)
      startVal [time (s)] = 0.0
      text = Press enter to submit your answer
      units = norm
      wrapWidth = 3
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  Routine survey6
    TextComponent copyText_6
      letterHeight = 0.08
      pos = (-0.05, 0.1)
      startVal [time (s)] = 0
      units = norm
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    CodeComponent code_answer_6
      Code Type = Auto->JS
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      Begin Experiment:
        import string
        allLetters = list(string.ascii_lowercase+string.digits)
      Begin Routine:
        textFill_6 = ''
      Each Frame:
        keys = event.getKeys()
        if 'escape' in keys:
            core.quit()  # So you can quit
        else:
            if keys:
                if keys[0] == 'space':
                    textFill_6 += ' '  # Adds a space instead of 'space'
                if keys[0] == 'backspace':
                    textFill_6 = textFill_6[:-1]  # Deletes
                elif keys[0] == 'period':
                    textFill_6 += '.'
                elif keys[0] in allLetters:
                    textFill_6+=keys[0]  # Adds character to text if in alphabet.
                copyText_6.setText(textFill_6)  # Set new text on screen
      End Routine:
        thisExp.addData('answer6', textFill_6)
        thisExp.nextEntry()
    TextComponent question_6
      letterHeight = 0.08
      pos = (0, 0.5)
      startVal [time (s)] = 0
      text = 6. What is your experience in horticulture? Please rate from 1-5. low=1 high=5
      units = norm
      wrapWidth = 1.5
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    TextComponent submitanswer_6
      letterHeight = 0.08
      pos = (0, -0.9)
      startVal [time (s)] = 0.0
      text = Press enter to submit your answer
      units = norm
      wrapWidth = 3
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  Routine survey7
    TextComponent copyText_7
      letterHeight = 0.08
      pos = (-0.05, 0.1)
      startVal [time (s)] = 0
      units = norm
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    CodeComponent code_answer_7
      Code Type = Auto->JS
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      Begin Experiment:
        import string
        allLetters = list(string.ascii_lowercase+string.digits)
      Begin Routine:
        textFill_7 = ''
      Each Frame:
        keys = event.getKeys()
        if 'escape' in keys:
            core.quit()  # So you can quit
        else:
            if keys:
                if keys[0] == 'space':
                    textFill_7 += ' '  # Adds a space instead of 'space'
                if keys[0] == 'backspace':
                    textFill_7 = textFill_7[:-1]  # Deletes
                elif keys[0] == 'period':
                    textFill_7 += '.'
                elif keys[0] in allLetters:
                    textFill_7+=keys[0]  # Adds character to text if in alphabet.
                copyText_7.setText(textFill_7)  # Set new text on screen
      End Routine:
        thisExp.addData('answer7', textFill_7)
        thisExp.nextEntry()
    TextComponent question_7
      letterHeight = 0.08
      pos = (0, 0.5)
      startVal [time (s)] = 0
      units = norm
      wrapWidth = 1.5
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      text:
        Please type any other comments you may have.

        You have now finished the experiment. Thank you for your participation!
    TextComponent submitanswer_7
      letterHeight = 0.08
      pos = (0, -0.9)
      startVal [time (s)] = 0.0
      text = Press enter to submit your answer
      units = norm
      wrapWidth = 3
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  Routine responseprac_feedback
    CodeComponent code_25
      Code Type = Auto->JS
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      Begin Routine:
        if 0 <= responsenumber <= 1:
            responsefeedback = f'You selected {responsenumber}'
            responsefeedback1 = f'{responsenumber} indicates you found the flowers very similar';

        if 2 <= responsenumber <= 3:
            responsefeedback = f'You selected {responsenumber}'
            responsefeedback1 = f'{responsenumber} indicates you found the flowers similar';


        if 4 <= responsenumber  <= 5:
            responsefeedback = f'You selected {responsenumber}' ;
            responsefeedback1 = f'{responsenumber} indicates you found the flowers different';

        if 6 <= responsenumber  <= 7:
            responsefeedback = f'You selected {responsenumber}' ;
            responsefeedback1 = f'{responsenumber} indicates you found the flowers very different';
    TextComponent text_55
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $responsefeedback
      units = norm
      wrapWidth = 1000
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    TextComponent text_56
      letterHeight = 0.1
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $responsefeedback1
      units = norm
      wrapWidth = 1000
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
  Routine survey8
    TextComponent copyText_8
      letterHeight = 0.08
      pos = (-0.05, 0.1)
      startVal [time (s)] = 0
      units = norm
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    CodeComponent code_answer_8
      Code Type = Auto->JS
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      Begin Experiment:
        import string
        allLetters = list(string.ascii_lowercase+string.digits)
      Begin Routine:
        textFill_8 = ''
      Each Frame:
        keys = event.getKeys()
        if 'escape' in keys:
            core.quit()  # So you can quit
        else:
            if keys:
                if keys[0] == 'space':
                    textFill_8 += ' '  # Adds a space instead of 'space'
                if keys[0] == 'backspace':
                    textFill_8 = textFill_8[:-1]  # Deletes
                elif keys[0] == 'period':
                    textFill_8 += '.'
                elif keys[0] in allLetters:
                    textFill_8+=keys[0]  # Adds character to text if in alphabet.
                copyText_8.setText(textFill_8)  # Set new text on screen
      End Routine:
        thisExp.addData('answer8', textFill_8)
        thisExp.nextEntry()
    TextComponent question_8
      letterHeight = 0.08
      pos = (0, 0.5)
      startVal [time (s)] = 0
      units = norm
      wrapWidth = 1.5
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      text:
        7. How often do you buy flowers? Please type one of the following options:
        - Never
        - Once or twice in the space of several months
        - Once or twice per month
        - Once per week
        - More than once per week
    TextComponent submitanswer_8
      letterHeight = 0.08
      pos = (0, -0.9)
      startVal [time (s)] = 0.0
      text = Press enter to submit your answer
      units = norm
      wrapWidth = 3
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Flow
  Routine startup
  Routine welcome_instr
  Routine consent
  Routine instr_1
  Routine screen_scale
  Routine instr_2
  Routine instr_3
  Routine instr_4
  Routine instr_5
  Routine instr_6
  Routine instr_7
  Routine instr_8
  Routine instr_9
  Routine instr_10
  Routine instr_11
  Routine calibration_example
  Routine instr_12
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine ball_calibration
  LoopTerminator trials
  Routine viewerdistance
  Routine viewerdistance_unsucess
  Routine stim1_instr
  Routine stim_response_instr
  Routine catch_insrt
  Routine colour_circle_instr_2
  Routine instr_prac
  LoopInitiator duringprac loopType="TrialHandler"
    Selected rows = 0:7
    conditionsFile = practrials.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Ecc', 'FF')]),
      OrderedDict([('Ecc', 'PF')]),
      OrderedDict([('Ecc', 'PF')]),
      OrderedDict([('Ecc', 'FF')]),
      OrderedDict([('Ecc', 'PF')]),
      OrderedDict([('Ecc', 'FF')]),
      OrderedDict([('Ecc', 'PF')]),
      OrderedDict([('Ecc', 'FF')]),
      OrderedDict([('Ecc', 'PF')])]
    Routine Stim1_display_prac
    Routine response_prac
    Routine responseprac_feedback
    Routine summary_prac
    Routine special_trial_prac
    Routine catch_prac
    Routine summary2_prac
  LoopTerminator duringprac
  Routine begin
  LoopInitiator trials_3 loopType="TrialHandler"
    loopType = random
    nReps = 2
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    LoopInitiator trials_2 loopType="TrialHandler"
      Selected rows = 0:163
      conditionsFile = Stimconditionsflower.xlsx
      loopType = random
      nReps = 1
      random seed = order
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      conditions:
        [OrderedDict([('Flower1', 6), ('Flower2', 6), ('Ecc', 'PF')]),
        OrderedDict([('Flower1', 1), ('Flower2', 3), ('Ecc', 'PF')]),
        OrderedDict([('Flower1', 1), ('Flower2', 2), ('Ecc', 'FF')]),
        OrderedDict([('Flower1', 3), ('Flower2', 8), ('Ecc', 'PF')]),
        OrderedDict([('Flower1', 3), ('Flower2', 3), ('Ecc', 'PF')]),
        OrderedDict([('Flower1', 6), ('Flower2', 1), ('Ecc', 'FF')]),
        OrderedDict([('Flower1', 9), ('Flower2', 8), ('Ecc', 'FF')]),
        OrderedDict([('Flower1', 5), ('Flower2', 7), ('Ecc', 'FF')]),
        OrderedDict([('Flower1', 5), ('Flower2', 4), ('Ecc', 'FF')]),
        OrderedDict([('Flower1', 2), ('Flower2', 1), ('Ecc', 'PF')]),
        OrderedDict([('Flower1', 7), ('Flower2', 9), ('Ecc', 'PF')]),
        OrderedDict([('Flower1', 9), ('Flower2', 2), ('Ecc', 'FF')]),
        OrderedDict([('Flower1', 5), ('Flower2', 6), ('Ecc', 'FF')]),
        OrderedDict([('Flower1', 4), ('Flower2', 2), ('Ecc', 'FF')]),
        OrderedDict([('Flower1', 2), ('Flower2', 2), ('Ecc', 'PF')]),
        OrderedDict([('Flower1', 1), ('Flower2', 9), ('Ecc', 'PF')]),
        OrderedDict([('Flower1', 5), ('Flower2', 8), ('Ecc', 'FF')]),
        OrderedDict([('Flower1', 9), ('Flower2', 9), ('Ecc', 'FF')]),
        OrderedDict([('Flower1', 6), ('Flower2', 7), ('Ecc', 'FF')]),
        OrderedDict([('Flower1', 5), ('Flower2', 5), ('Ecc', 'FF')]),
        OrderedDict([('Flower1', 8), ('Flower2', 1), ('Ecc', 'FF')]),
        OrderedDict([('Flower1', 6), ('Flower2', 3), ('Ecc', 'FF')]),
        OrderedDict([('Flower1', 8), ('Flower2', 2), ('Ecc', 'FF')]),
        OrderedDict([('Flower1', 8), ('Flower2', 7), ('Ecc', 'PF')])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
      Routine Stim1_display
      Routine response
      Routine response_2
      Routine special_trial
      Routine catch_1
      Routine response_sum
    LoopTerminator trials_2
  LoopTerminator trials_3
  Routine survey1
  Routine survey2
  Routine survey3
  Routine survey_4
  Routine survey5
  Routine survey6
  Routine survey8
  Routine survey7
